# Created by BioNetGen 2.1.8+
substanceUnits("Number");

begin model
begin parameters
  Lig_tot   50000
  Rec_tot   3000
  cTot      2.7
  beta      16.8
  koff      0.01
  kp1       (cTot*koff)/(3.0*Lig_tot)
  kp2       (beta*koff)/Rec_tot
  k_gather  100000
  kp1_1     3*((cTot*koff)/(3.0*Lig_tot))
  kp1_2     6*((cTot*koff)/(3.0*Lig_tot))
  kp2_1     2*((beta*koff)/Rec_tot)
  kp2_2     2*((beta*koff)/Rec_tot)
end parameters
begin molecule types
  R_pop()              population
  L_pop()              population
  R(l,l)             
  L(r,r,r)           
end molecule types
begin observables
  Molecules Rfree R(l,l) R_pop() R_pop()
  Molecules Lfree L(r,r,r) L_pop() L_pop() L_pop() L_pop() L_pop() L_pop()
  Molecules Rtot R() R_pop()
  Molecules Ltot L() L_pop()
  Molecules LRmotif L(r!1).R(l!1)
  Species R2 R()==2
  Species R3 R()==3
  Species R4 R()==4
  Species R5 R()>4
end observables
begin species
  R_pop()  Rec_tot
  L_pop()  Lig_tot
end species
begin reaction rules
  Rule1_v1:  L(r!1).R(l!1) -> R(l) + L(r)  koff
  Rule2_v1:  L_pop() + R(l) -> L(r!1,r,r).R(l!1)  kp1_1
  Rule2_v2:  L_pop() + R_pop() -> L(r!1,r,r).R(l!1,l)  kp1_2
  Rule3_v1:  L(r%T1!+,r%T2,r%T3) + R(l) -> L(r%T1!+,r%T2!1,r%T3).R(l!1)  kp2
  Rule3_v2:  L(r%T1!+,r%T2,r%T3) + R_pop() -> L(r%T1!+,r%T2!1,r%T3).R(l!1,l)  kp2_1
  Rule4_v1:  L(r%T1!+,r%T2!+,r%T3) + R(l) -> L(r%T1!+,r%T2!+,r%T3!1).R(l!1)  kp2
  Rule4_v2:  L(r%T1!+,r%T2!+,r%T3) + R_pop() -> L(r%T1!+,r%T2!+,r%T3!1).R(l!1,l)  kp2_2
  MapRule0:  L(r,r,r) -> L_pop()  k_gather
  MapRule1:  R(l,l) -> R_pop()  k_gather
end reaction rules
end model


###  model actions  ###

writeXML();

