#Here are the molecules
#L(r,r)
#R(l,b~0~P)
#Lyn(U,SH2)

#Ligand binds receptors and forms complexes with two receptors - dimers:

#R(l!1,b~0).L(r!1,r!2)R(l!2,b~0)

#Lyn binds unphosphorylated receptors via the U domain:

#R(l!1,b~0).L(r!1,r!2)R(l!2,b~0!3).Lyn(U!3,SH2)

#If the remaining SH2 domain here can also bind a receptor, a bigger complex can form

#R(l!1,b~0).L(r!1,r!2)R(l!2,b~0!3).Lyn(U!3,SH2!4).R(l!5,b~P!4).L(r!5,r!6)R(l!2,b~P)

#Addition Lyn molecules can bind at either end.

begin model
begin seed species
L(r,r) 1
R(l,b) 1
Lyn(U,SH2) 1 
end  seed species

begin reaction rules

L(r) + R(l) <-> R(l!1).L(r!1) 1,1
#Lyn(SH2, U) + R(b) <-> Lyn(SH2!1, U).R(b!1)
#Lyn(U, SH2) + R(b) <-> Lyn(U!1, SH2).R(b!1)

Lyn(SH2) + R(b) <-> Lyn(SH2!1).R(b!1) 1,1
Lyn(U) + R(b) <-> Lyn(U!1).R(b!1) 1,1

end reaction rules
end model
