###
#@BQB_HAS_VERSION:['http://identifiers.org/doid/DOID:8778']
#@BQB_IS_VERSION_OF:['http://identifiers.org/go/GO:0004915']
#@BQB_HAS_PART:['http://identifiers.org/go/GO:0007259']
#@BQB_IS_PART_OF:['http://identifiers.org/reactome/REACT_27307.1']
#@creatorName:'Knight-Schrijver Vincent'
#@creatorEmail:'vknight@ebi.ac.uk'
#@notes:'This is an atomized translation of an SBML model created on 17/03/2015. The original model has 44 molecules and 73 reactions. The translated model has 13 molecules and 73 rules'
#@BQB_HAS_TAXON:['http://identifiers.org/biomodels.db/MODEL1408050002', 'http://identifiers.org/biomodels.db/BIOMD0000000537', 'http://identifiers.org/pubmed/24402116', 'http://identifiers.org/taxonomy/9606']
###
begin model
begin parameters
	kRLOn 0.384
	kRLOff 1.92
	kgp130On 20.52
	kgp130Off 1.026
	kRAct 155.0
	kRint 1.96
	kRsynth 0.0685
	kRdeg 0.1561
	kIL6Synth 0.0063
	kIL6Decay 34.82
	kCRPDecay 0.36
	mwfd291862_195f_4979_94b5_b4e5ae1b7d52 5.34
	mwd36b0261_2480_4cab_9222_2cf8fb0e65dc 0.62
	mw1667a8e0_9d20_4e59_ba51_596148aba787 0.525
	mwfcf06900_5f2f_4bb3_bb1f_12023612b8a8 155.3
	mw9442cd0e_4d7c_4ba6_a695_f84919bdf569 145.0
	mwe8fc1900_f07d_468b_b5c8_15400a583c3d 219.0
	mw08950572_81b0_4570_b2e4_b9c3462c1425 10.0
	mw92d854a7_8aaf_458e_b5e2_20a63ce9b654 330.0
	mw862f1480_c60c_4863_a565_b2c1c77e238e 0.5
	mw65c85954_5ca0_4df2_9e22_ff2aa3fbe3f1 0.42
	mwc4c58db7_5535_4590_aaa5_bbc8ed53cdab 0.1
	mw88a75379_f9a1_4acc_baeb_94c32bb736a5 0.3
	mw1f41474c_c399_4a60_a53a_9926dd092e8d 3.9
	mwbcb5a310_9b67_405e_89ec_43d25e8cc93d 1.0
	mwa8d72918_f6c2_4d81_bf3b_fc2b464d5e69 0.036
	mw06241335_b5f2_47ed_bdcc_ef77b68a2b98 1.0
	mwce10678d_8197_408c_ad47_1daec8104cd8 0.8473
	mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb 1.2125
	mw5832a2dc_ee18_44df_aa59_ccb21cb74df2 0.0054
	mwf44f7f27_5bb1_4c7f_8964_560fa5e1743a 0.01
	mwa09d6284_843e_404e_abbb_052fbb535197 1000.0
	mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead 2.5
	mwdc9e2eb7_c8f4_4026_a8d0_eff8ce1f1aea 1.0
	mw2c605ff5_50f5_45f2_a70c_53fcd866d14c 2.88
	mwc691d0d1_8c1b_4ce4_85c6_1315c42e97b1 2.88
	mwa8283449_0e21_41a1_baac_ebf697b3555a 1.44
	mw6729db10_c577_4319_b355_2e3f11c0f942 0.576
	mw434adaf5_cef0_4a33_9ad2_a4e49e1fd825 0.06
	mw6a5e10a9_d442_4dde_8ec3_6a26c9807374 0.03
	mw1366c3b5_e79b_44a7_93cc_ee09d383eabf 0.001
	mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 0.0018
	Dose 300.0
	mw640ca705_e089_4c64_a5f4_9562317e8c76 0.06/2.88
	mw43ccad8c_cabf_4eaf_90d5_e06ae43be2cb 0.06/2.88
	mw9f83bdd3_3aa1_47ff_abd6_54e5ce60704a 0.03/2.88
	mwa071fdbe_d498_4620_a7a4_940aa31c8161 0.03/1.44
	mwf67caf9d_2f4b_4986_abf2_e6090bbb72ce 0.001/2.88
	mw4aea26f6_8860_414c_97f5_40d325196f2e 0.001/0.576
	Metabolite_40 221.063676086
	ModelValue_99 0
	ModelValue_98 300.0
	parameter_1 0
end parameters
begin compartments
	mw53ffe9e6_beef_45c4_90a5_a79197ed506e  3  1.0
	mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e  3  1.0
	mwe9501423_9fb4_494b_b5b6_288f3fcb17b5  3  1.0
	mw8fbcbf3b_47d8_4adc_8ad4_f9fc547d3e87  3  1.0
	cell 3 1.0
end compartments
begin molecule types
	IL6(crp,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0~0~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)
	sgp130(genericMod~sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e~0~sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,il6)
	CRP(ab,genericMod~sR~0~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6)
	Ab(crp,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c~0~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d~Ab_mwbc2f5464_81e5_43fd_8b39_f5a2756af72f,r)
	Ab_sR_IL6(genericMod~Ab_sR_IL6_mwedc1bc00_adf7_4144_a1c2_7dc1a9565dc2~0~Ab_sR_IL6_mw2ba2b802_9f07_4f4d_94c6_24c8de1a95cf)
	gp130(il6)
	R(ab,il6)
	Ractive()
	STAT3(pmod~P~0)
	CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349(genericMod~CRPExtracellular~0)
	gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6)
	Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d()
	STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446(genericMod~pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b~0)
end molecule types
begin seed species
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:IL6(crp,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130) 0.000435628896551 #IL6 #mwf626e95e_543f_41e4_aad4_c6bf60ab345b
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:sgp130(genericMod~0,il6) 3.9 #sgp130 #mwbbbce920_e8dd_4320_9386_fc94bfb2fc99
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1).CRP(ab,genericMod~sR,il6!0).sgp130(genericMod~0,il6!1) 0.0874060669217 #sR_IL6_sgp130 #mw810ff751_fa4e_4143_bd50_169b3e325e1e
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:CRP(ab,genericMod~0,il6) 221.063676086 #CRP #mw114aa90f_5f5b_4fe8_9406_361c8489b6a1
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:CRP(ab,genericMod~sR,il6) 4.25350679194 #sR #mw30ae63db_6cd3_4b6f_93ad_3350cd360bcc
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130).CRP(ab,genericMod~sR,il6!0) 0.00109424263781 #sR_IL6 #mw03db56ac_8dc6_4931_ae82_fef706d2ee3d
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:Ab(crp,genericMod~0,r) 2.38181965638e-29 #Ab #mwf345ed7a_0622_403c_b816_c8749a2c9ded
	@mw53ffe9e6_beef_45c4_90a5_a79197ed506e:Ab(crp!0,genericMod~0,r).CRP(ab!0,genericMod~sR,il6) 6.10439110812e-26 #Ab_sR #mw1da111f2_a036_4392_8512_015005bdcbb7
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:gp130(il6) 0.388958921404 #gp130 #mw80848184_e2dd_47ce_86d7_7a21479342bd
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(crp,genericMod~0,gp130!1,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130).R(ab,il6!0).gp130(il6!1) 6.59935877686e-05 #R_IL6_gp130 #mwd2d9d93a_3bd1_4f17_bac1_baba9ef2d55a
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130).CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0) 0.000976164943879 #sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 #mw4638f126_8cb8_4021_ab41_6ae195743ba0
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:R(ab,il6) 0.438235811136 #R #mw10315fa3_6f13_4618_bda8_a8694bd3c374
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130) 0.000725665811446 #IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 #mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130).R(ab,il6!0) 1.60036523605e-05 #R_IL6 #mw7d86cc23_a1af_44c3_bdb9_71e9b1bb2a83
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:Ractive() 0.765416493682 #Ractive #mw0eb6c959_d408_45a0_a450_928b8c5876bb
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:STAT3(pmod~0) 0.777537339578 #STAT3 #mw42054cd7_17af_46da_970c_7f99151906ad
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:STAT3(pmod~P) 9.22246266042 #pSTAT3 #mw39c2e431_fdc3_4964_be29_6ca856620b1b
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:$CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349(genericMod~0) 158.325846782 #CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349 #mwd5313618_89eb_4c8c_bc82_66f10f966349
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6) 6.08704712819 #sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e #mw2e464cf3_a09c_4b7c_9f3c_06720016a48e
	#@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349(genericMod~CRPExtracellular) 409.775322371 #CRPExtracellular #mw36ea78c1_ed71_4def_96d3_857a442d7195
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:sgp130(genericMod~sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,il6) 5.58969889235 #sgp130_mw147d30ec_478e_4090_b496_128a131d29eb #mw147d30ec_478e_4090_b496_128a131d29eb
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1).CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0).sgp130(genericMod~sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,il6!1) 0.11634366181 #sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06 #mwab41493c_6349_45f1_a226_3030cfed0e06
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:Ab(crp!0,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r).CRP(ab!0,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6) 8.61619309644e-26 #Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a #mwf405687b_7401_44ec_a0d6_4a2b35c13e8a
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r) 2.20020723251e-29 #Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d #mw3667a5e1_02c9_44a0_acb4_b0431faa822d
	@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e:Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r!0).R(ab!0,il6) 2.03371981684e-27 #Ab_R #mw772cbf20_3fc1_4800_ae59_77884f1ae333
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130).CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0) 0.00130682388893 #sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 #mw7becb5fe_8da8_4285_a821_0d77ad811b62
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6) 0.374962692934 #gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca #mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca!1,r,sgp130).CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0).gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6!1) 8.44890497634e-05 #R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9 #mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d() 0.980272509547 #Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d #mw6cce2109_0e32_4dd9_98ec_41173e8ef07d
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446(genericMod~0) 0.610636013508 #STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446 #mw2b255f94_8018_4b99_bde8_918eeac45446
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446(genericMod~pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b) 9.38936398649 #pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b #mw48867e93_f170_44e8_ac7a_185b23e1bf3b
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6) 6.06410682472 #sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 #mwd31f52cc_04e7_40e0_885f_c7b2d9e62215
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:IL6(crp,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130) 0.00934819866161 #IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0 #mw2c9b0499_3325_4394_8af3_bbf653a944a0
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:sgp130(genericMod~sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,il6) 5.56973864471 #sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e #mwd65b5b39_dc1b_4e77_a999_67277a880e5e
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1).CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0).sgp130(genericMod~sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,il6!1) 0.136303909449 #sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3 #mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:Ab(crp,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r) 2.15878958765e-29 #Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c #mwf7796221_1fea_4274_a93e_c00adbf5778c
	@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5:Ab(crp!0,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r).CRP(ab!0,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6) 2.62059686238e-26 #Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0 #mw5d764bb8_5693_4ac8_9557_f65992cc5eb0
	@mw8fbcbf3b_47d8_4adc_8ad4_f9fc547d3e87:Ab(crp,genericMod~Ab_mwbc2f5464_81e5_43fd_8b39_f5a2756af72f,r) 1.67920947538e-29 #Ab_mwbc2f5464_81e5_43fd_8b39_f5a2756af72f #mwbc2f5464_81e5_43fd_8b39_f5a2756af72f
end seed species
begin observables
	Species IL6 IL6(crp,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130) #IL6
	Species sgp130 sgp130(genericMod~0,il6) #sgp130
	Species sR_IL6_sgp130 IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1).CRP(ab,genericMod~sR,il6!0).sgp130(genericMod~0,il6!1) #sR_IL6_sgp130
	Species CRP CRP(ab,genericMod~0,il6) #CRP
	Species sR CRP(ab,genericMod~sR,il6) #sR
	Species sR_IL6 IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130).CRP(ab,genericMod~sR,il6!0) #sR_IL6
	Species Ab Ab(crp,genericMod~0,r) #Ab
	Species Ab_sR Ab(crp!0,genericMod~0,r).CRP(ab!0,genericMod~sR,il6) #Ab_sR
	Species Ab_sR_IL6 Ab_sR_IL6(genericMod~0) #Ab_sR_IL6
	Species gp130 gp130(il6) #gp130
	Species R_IL6_gp130 IL6(crp,genericMod~0,gp130!1,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130).R(ab,il6!0).gp130(il6!1) #R_IL6_gp130
	Species sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130).CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0) #sR_IL6
	Species R R(ab,il6) #R
	Species IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130) #IL6
	Species R_IL6 IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130).R(ab,il6!0) #R_IL6
	Species Ractive Ractive() #Ractive
	Species STAT3 STAT3(pmod~0) #STAT3
	Species pSTAT3 STAT3(pmod~P) #pSTAT3
	Species CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349 CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349(genericMod~0) #CRP
	Species sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6) #sR
	Species CRPExtracellular CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349(genericMod~CRPExtracellular) #CRPExtracellular
	Species sgp130_mw147d30ec_478e_4090_b496_128a131d29eb sgp130(genericMod~sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,il6) #sgp130
	Species sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06 IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1).CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0).sgp130(genericMod~sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,il6!1) #sR_IL6_sgp130
	Species Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a Ab(crp!0,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r).CRP(ab!0,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6) #Ab_sR
	Species Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r) #Ab
	Species Ab_R Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r!0).R(ab!0,il6) #Ab_R
	Species Ab_sR_IL6_mw2ba2b802_9f07_4f4d_94c6_24c8de1a95cf Ab_sR_IL6(genericMod~Ab_sR_IL6_mw2ba2b802_9f07_4f4d_94c6_24c8de1a95cf) #Ab_sR_IL6
	Species sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130).CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0) #sR_IL6
	Species gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6) #gp130
	Species R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9 IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca!1,r,sgp130).CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0).gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6!1) #R_IL6_gp130
	Species Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d() #Ractive
	Species STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446 STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446(genericMod~0) #STAT3
	Species pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446(genericMod~pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b) #pSTAT3
	Species sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6) #sR
	Species IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0 IL6(crp,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130) #IL6
	Species sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e sgp130(genericMod~sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,il6) #sgp130
	Species sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3 IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1).CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0).sgp130(genericMod~sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,il6!1) #sR_IL6_sgp130
	Species Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c Ab(crp,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r) #Ab
	Species Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0 Ab(crp!0,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r).CRP(ab!0,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6) #Ab_sR
	Species Ab_sR_IL6_mwedc1bc00_adf7_4144_a1c2_7dc1a9565dc2 Ab_sR_IL6(genericMod~Ab_sR_IL6_mwedc1bc00_adf7_4144_a1c2_7dc1a9565dc2) #Ab_sR_IL6
	Species Ab_mwbc2f5464_81e5_43fd_8b39_f5a2756af72f Ab(crp,genericMod~Ab_mwbc2f5464_81e5_43fd_8b39_f5a2756af72f,r) #Ab
end observables
begin functions
	functionRate0() = if(if(IL6>0,if(sR>0, ( ( kRLOn )   * ( sR )   * ( IL6 )   - ( kRLOff )   * ( sR_IL6 )   )/ ( 1.0 )    /sR,0)/IL6,0)>0,if(IL6>0,if(sR>0, ( ( kRLOn )   * ( sR )   * ( IL6 )   - ( kRLOff )   * ( sR_IL6 )   )/ ( 1.0 )    /sR,0)/IL6,0),0)
	functionRate0m() = if(if(sR_IL6>0, ( ( kRLOn )   * ( sR )   * ( IL6 )   - ( kRLOff )   * ( sR_IL6 )   )/ ( 1.0 )    /sR_IL6,0)<0,-(if(sR_IL6>0, ( ( kRLOn )   * ( sR )   * ( IL6 )   - ( kRLOff )   * ( sR_IL6 )   )/ ( 1.0 )    /sR_IL6,0)),0)
	functionRate1() = if(if(sR_IL6>0,if(sgp130>0, ( ( kgp130On )   * ( sR_IL6 )   * ( sgp130 )   - ( kgp130Off )   * ( sR_IL6_sgp130 )   )/ ( 1.0 )    /sgp130,0)/sR_IL6,0)>0,if(sR_IL6>0,if(sgp130>0, ( ( kgp130On )   * ( sR_IL6 )   * ( sgp130 )   - ( kgp130Off )   * ( sR_IL6_sgp130 )   )/ ( 1.0 )    /sgp130,0)/sR_IL6,0),0)
	functionRate1m() = if(if(sR_IL6_sgp130>0, ( ( kgp130On )   * ( sR_IL6 )   * ( sgp130 )   - ( kgp130Off )   * ( sR_IL6_sgp130 )   )/ ( 1.0 )    /sR_IL6_sgp130,0)<0,-(if(sR_IL6_sgp130>0, ( ( kgp130On )   * ( sR_IL6 )   * ( sgp130 )   - ( kgp130Off )   * ( sR_IL6_sgp130 )   )/ ( 1.0 )    /sR_IL6_sgp130,0)),0)
	functionRate2() =   ( kIL6Synth )   / ( 1.0 )    
	functionRate3() = if(IL6>0,  ( kIL6Decay )   * ( IL6 )   / ( 1.0 )    /IL6,0)
	functionRate4() = if(CRP>0,  ( kCRPDecay )   * ( CRP )   / ( 1.0 )    /CRP,0)
	functionRate5() = if(if(sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0>0,if(gp130>0, ( ( kgp130On )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   * ( gp130 )   - ( kgp130Off )   * ( R_IL6_gp130 )   )/ ( 1.0 )    /gp130,0)/sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0,0)>0,if(sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0>0,if(gp130>0, ( ( kgp130On )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   * ( gp130 )   - ( kgp130Off )   * ( R_IL6_gp130 )   )/ ( 1.0 )    /gp130,0)/sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0,0),0)
	functionRate5m() = if(if(R_IL6_gp130>0, ( ( kgp130On )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   * ( gp130 )   - ( kgp130Off )   * ( R_IL6_gp130 )   )/ ( 1.0 )    /R_IL6_gp130,0)<0,-(if(R_IL6_gp130>0, ( ( kgp130On )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   * ( gp130 )   - ( kgp130Off )   * ( R_IL6_gp130 )   )/ ( 1.0 )    /R_IL6_gp130,0)),0)
	functionRate6() = if(if(IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1>0,if(R>0, ( ( kRLOn )   * ( R )   * ( IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 )   - ( kRLOff )   * ( R_IL6 )   )/ ( 1.0 )    /R,0)/IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,0)>0,if(IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1>0,if(R>0, ( ( kRLOn )   * ( R )   * ( IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 )   - ( kRLOff )   * ( R_IL6 )   )/ ( 1.0 )    /R,0)/IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,0),0)
	functionRate6m() = if(if(R_IL6>0, ( ( kRLOn )   * ( R )   * ( IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 )   - ( kRLOff )   * ( R_IL6 )   )/ ( 1.0 )    /R_IL6,0)<0,-(if(R_IL6>0, ( ( kRLOn )   * ( R )   * ( IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 )   - ( kRLOff )   * ( R_IL6 )   )/ ( 1.0 )    /R_IL6,0)),0)
	functionRate7() = if(if(R_IL6>0,if(gp130>0, ( ( kgp130On )   * ( R_IL6 )   * ( gp130 )   - ( kgp130Off )   * ( R_IL6_gp130 )   )/ ( 1.0 )    /gp130,0)/R_IL6,0)>0,if(R_IL6>0,if(gp130>0, ( ( kgp130On )   * ( R_IL6 )   * ( gp130 )   - ( kgp130Off )   * ( R_IL6_gp130 )   )/ ( 1.0 )    /gp130,0)/R_IL6,0),0)
	functionRate7m() = if(if(R_IL6_gp130>0, ( ( kgp130On )   * ( R_IL6 )   * ( gp130 )   - ( kgp130Off )   * ( R_IL6_gp130 )   )/ ( 1.0 )    /R_IL6_gp130,0)<0,-(if(R_IL6_gp130>0, ( ( kgp130On )   * ( R_IL6 )   * ( gp130 )   - ( kgp130Off )   * ( R_IL6_gp130 )   )/ ( 1.0 )    /R_IL6_gp130,0)),0)
	functionRate8() = if(R_IL6_gp130>0,  ( kRAct )   * ( R_IL6_gp130 )   / ( 1.0 )    /R_IL6_gp130,0)
	functionRate9() = if(Ractive>0,if(STAT3>0,  ( mw9442cd0e_4d7c_4ba6_a695_f84919bdf569 )   * ( Ractive )   * ( STAT3 )   /( ( mwe8fc1900_f07d_468b_b5c8_15400a583c3d )   + ( STAT3 )   )/ ( 1.0 )    /STAT3,0)/Ractive,0)
	functionRate10() = if(pSTAT3>0,  ( mwd36b0261_2480_4cab_9222_2cf8fb0e65dc )   * ( pSTAT3 )   /( ( mwfd291862_195f_4979_94b5_b4e5ae1b7d52 )   + ( pSTAT3 )   )/ ( 1.0 )    /pSTAT3,0)
	functionRate11() = if(R>0,  ( kRdeg )   * ( R )   / ( 1.0 )    /R,0)
	functionRate12() = if(R_IL6>0,  ( kRint )   * ( R_IL6 )   / ( 1.0 )    /R_IL6,0)
	functionRate13() = if(R_IL6_gp130>0,  ( kRint )   * ( R_IL6_gp130 )   / ( 1.0 )    /R_IL6_gp130,0)
	functionRate14() = if(Ractive>0,  ( mwf44f7f27_5bb1_4c7f_8964_560fa5e1743a )   * ( Ractive )   / ( 1.0 )    /Ractive,0)
	functionRate15() =   ( kRsynth )   / ( 1.0 )    
	functionRate16() = if(if(gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca>0,if(sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62>0, ( ( kgp130On )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   * ( gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca )   - ( kgp130Off )   * ( R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9 )   )/ ( 1.0 )    /sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62,0)/gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,0)>0,if(gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca>0,if(sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62>0, ( ( kgp130On )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   * ( gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca )   - ( kgp130Off )   * ( R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9 )   )/ ( 1.0 )    /sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62,0)/gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,0),0)
	functionRate16m() = if(if(R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9>0, ( ( kgp130On )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   * ( gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca )   - ( kgp130Off )   * ( R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9 )   )/ ( 1.0 )    /R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9,0)<0,-(if(R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9>0, ( ( kgp130On )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   * ( gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca )   - ( kgp130Off )   * ( R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9 )   )/ ( 1.0 )    /R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9,0)),0)
	functionRate17() = if(R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9>0,  ( kRAct )   * ( R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9 )   / ( 1.0 )    /R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9,0)
	functionRate18() = if(Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d>0,if(STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446>0,  ( mw9442cd0e_4d7c_4ba6_a695_f84919bdf569 )   * ( Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d )   * ( STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446 )   /( ( mwe8fc1900_f07d_468b_b5c8_15400a583c3d )   + ( STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446 )   )/ ( 1.0 )    /STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446,0)/Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d,0)
	functionRate19() = if(pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b>0,  ( mwd36b0261_2480_4cab_9222_2cf8fb0e65dc )   * ( pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b )   /( ( mwfd291862_195f_4979_94b5_b4e5ae1b7d52 )   + ( pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b )   )/ ( 1.0 )    /pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b,0)
	functionRate20() = if(R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9>0,  ( kRint )   * ( R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9 )   / ( 1.0 )    /R_IL6_gp130_mw824bc3d4_1ac3_4912_9b51_8f14ff1c96b9,0)
	functionRate21() = if(Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d>0,  ( mwf44f7f27_5bb1_4c7f_8964_560fa5e1743a )   * ( Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d )   / ( 1.0 )    /Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d,0)
	functionRate22() = if(Ractive>0,  ( mw1667a8e0_9d20_4e59_ba51_596148aba787 )   * ( Ractive )   /( ( mwfcf06900_5f2f_4bb3_bb1f_12023612b8a8 )   + ( Ractive )   )/ ( 1.0 )    /Ractive,0)
	functionRate23() = if(Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d>0,  ( mw1667a8e0_9d20_4e59_ba51_596148aba787 )   * ( Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d )   /( ( mwfcf06900_5f2f_4bb3_bb1f_12023612b8a8 )   + ( Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d )   )/ ( 1.0 )    /Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d,0)
	functionRate24() =   ( kRsynth )   / ( 1.0 )    
	functionRate25() = if(gp130>0,  ( kRdeg )   * ( gp130 )   / ( 1.0 )    /gp130,0)
	functionRate26() =   ( kRsynth )   / ( 1.0 )    
	functionRate27() = if(gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca>0,  ( kRdeg )   * ( gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca )   / ( 1.0 )    /gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,0)
	functionRate30() = if(if(IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0>0,if(sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215>0, ( ( kRLOn )   * ( sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 )   * ( IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0 )   - ( kRLOff )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   )/ ( 1.0 )    /sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,0)/IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,0)>0,if(IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0>0,if(sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215>0, ( ( kRLOn )   * ( sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 )   * ( IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0 )   - ( kRLOff )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   )/ ( 1.0 )    /sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,0)/IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,0),0)
	functionRate30m() = if(if(sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62>0, ( ( kRLOn )   * ( sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 )   * ( IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0 )   - ( kRLOff )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   )/ ( 1.0 )    /sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62,0)<0,-(if(sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62>0, ( ( kRLOn )   * ( sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 )   * ( IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0 )   - ( kRLOff )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   )/ ( 1.0 )    /sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62,0)),0)
	functionRate35() = if(if(sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e>0,if(IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1>0, ( ( kRLOn )   * ( sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e )   * ( IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 )   - ( kRLOff )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   )/ ( 1.0 )    /IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,0)/sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,0)>0,if(sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e>0,if(IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1>0, ( ( kRLOn )   * ( sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e )   * ( IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 )   - ( kRLOff )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   )/ ( 1.0 )    /IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,0)/sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,0),0)
	functionRate35m() = if(if(sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0>0, ( ( kRLOn )   * ( sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e )   * ( IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 )   - ( kRLOff )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   )/ ( 1.0 )    /sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0,0)<0,-(if(sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0>0, ( ( kRLOn )   * ( sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e )   * ( IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1 )   - ( kRLOff )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   )/ ( 1.0 )    /sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0,0)),0)
	functionRate38() =   ( mw65c85954_5ca0_4df2_9e22_ff2aa3fbe3f1 )   / ( 1.0 )    
	functionRate41() = if(if(sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62>0,if(sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e>0, ( ( kgp130On )   * ( sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   - ( kgp130Off )   * ( sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3 )   )/ ( 1.0 )    /sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,0)/sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62,0)>0,if(sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62>0,if(sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e>0, ( ( kgp130On )   * ( sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   - ( kgp130Off )   * ( sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3 )   )/ ( 1.0 )    /sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,0)/sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62,0),0)
	functionRate41m() = if(if(sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3>0, ( ( kgp130On )   * ( sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   - ( kgp130Off )   * ( sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3 )   )/ ( 1.0 )    /sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3,0)<0,-(if(sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3>0, ( ( kgp130On )   * ( sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e )   * ( sR_IL6_mw7becb5fe_8da8_4285_a821_0d77ad811b62 )   - ( kgp130Off )   * ( sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3 )   )/ ( 1.0 )    /sR_IL6_sgp130_mw6335d5d7_c7b0_4bc0_b883_f7ee4915c2c3,0)),0)
	functionRate42() = if(if(sgp130_mw147d30ec_478e_4090_b496_128a131d29eb>0,if(sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0>0, ( ( kgp130On )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   * ( sgp130_mw147d30ec_478e_4090_b496_128a131d29eb )   - ( kgp130Off )   * ( sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06 )   )/ ( 1.0 )    /sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0,0)/sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,0)>0,if(sgp130_mw147d30ec_478e_4090_b496_128a131d29eb>0,if(sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0>0, ( ( kgp130On )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   * ( sgp130_mw147d30ec_478e_4090_b496_128a131d29eb )   - ( kgp130Off )   * ( sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06 )   )/ ( 1.0 )    /sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0,0)/sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,0),0)
	functionRate42m() = if(if(sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06>0, ( ( kgp130On )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   * ( sgp130_mw147d30ec_478e_4090_b496_128a131d29eb )   - ( kgp130Off )   * ( sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06 )   )/ ( 1.0 )    /sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06,0)<0,-(if(sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06>0, ( ( kgp130On )   * ( sR_IL6_mw4638f126_8cb8_4021_ab41_6ae195743ba0 )   * ( sgp130_mw147d30ec_478e_4090_b496_128a131d29eb )   - ( kgp130Off )   * ( sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06 )   )/ ( 1.0 )    /sR_IL6_sgp130_mwab41493c_6349_45f1_a226_3030cfed0e06,0)),0)
	functionRate45() =   ( mwc4c58db7_5535_4590_aaa5_bbc8ed53cdab )   / ( 1.0 )    
	functionRate46() = if(sR>0,  ( mw88a75379_f9a1_4acc_baeb_94c32bb736a5 )   * ( sR )   / ( 1.0 )    /sR,0)
	functionRate47() =   ( mw1f41474c_c399_4a60_a53a_9926dd092e8d )   / ( 1.0 )    
	functionRate48() = if(sgp130>0,  ( mwbcb5a310_9b67_405e_89ec_43d25e8cc93d )   * ( sgp130 )   / ( 1.0 )    /sgp130,0)
	functionRate49() =   ( mwa8d72918_f6c2_4d81_bf3b_fc2b464d5e69 )   / ( 1.0 )    
	functionRate50() = if(IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0>0,  ( mw06241335_b5f2_47ed_bdcc_ef77b68a2b98 )   * ( IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0 )   / ( 1.0 )    /IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,0)
	functionRate51() = if(CRP>0,  ( mw5832a2dc_ee18_44df_aa59_ccb21cb74df2 )   * ( CRP )   / ( 1.0 )    /CRP,0)
	functionRate53() = if(if(Ab>0,if(sR>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab )   * ( sR )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR )   )/ ( 1.0 )    /sR,0)/Ab,0)>0,if(Ab>0,if(sR>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab )   * ( sR )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR )   )/ ( 1.0 )    /sR,0)/Ab,0),0)
	functionRate53m() = if(if(Ab_sR>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab )   * ( sR )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR )   )/ ( 1.0 )    /Ab_sR,0)<0,-(if(Ab_sR>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab )   * ( sR )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR )   )/ ( 1.0 )    /Ab_sR,0)),0)
	functionRate54() = if(Ab_sR>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab_sR )   / ( 1.0 )    /Ab_sR,0)
	functionRate55() = if(Ab>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab )   / ( 1.0 )    /Ab,0)
	functionRate56() = if(Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0 )   / ( 1.0 )    /Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0,0)
	functionRate57() = if(if(Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c>0,if(sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c )   * ( sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0 )   )/ ( 1.0 )    /sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,0)/Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,0)>0,if(Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c>0,if(sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c )   * ( sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0 )   )/ ( 1.0 )    /sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,0)/Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,0),0)
	functionRate57m() = if(if(Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c )   * ( sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0 )   )/ ( 1.0 )    /Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0,0)<0,-(if(Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c )   * ( sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215 )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0 )   )/ ( 1.0 )    /Ab_sR_mw5d764bb8_5693_4ac8_9557_f65992cc5eb0,0)),0)
	functionRate58() = if(if(sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e>0,if(Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d )   * ( sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a )   )/ ( 1.0 )    /Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,0)/sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,0)>0,if(sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e>0,if(Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d )   * ( sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a )   )/ ( 1.0 )    /Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,0)/sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,0),0)
	functionRate58m() = if(if(Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d )   * ( sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a )   )/ ( 1.0 )    /Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a,0)<0,-(if(Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d )   * ( sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a )   )/ ( 1.0 )    /Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a,0)),0)
	functionRate59() = if(Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a )   / ( 1.0 )    /Ab_sR_mwf405687b_7401_44ec_a0d6_4a2b35c13e8a,0)
	functionRate64() = if(Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d )   / ( 1.0 )    /Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,0)
	functionRate65() = if(Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c )   / ( 1.0 )    /Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,0)
	functionRate66() = if(if(Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d>0,if(R>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d )   * ( R )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_R )   )/ ( 1.0 )    /R,0)/Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,0)>0,if(Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d>0,if(R>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d )   * ( R )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_R )   )/ ( 1.0 )    /R,0)/Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,0),0)
	functionRate66m() = if(if(Ab_R>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d )   * ( R )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_R )   )/ ( 1.0 )    /Ab_R,0)<0,-(if(Ab_R>0, ( ( mwa09d6284_843e_404e_abbb_052fbb535197 )   * ( Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d )   * ( R )   - ( mw1c4bc9c3_52ad_4ef7_bf7f_97b0e2101ead )   * ( Ab_R )   )/ ( 1.0 )    /Ab_R,0)),0)
	functionRate67() = if(Ab_R>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab_R )   / ( 1.0 )    /Ab_R,0)
	functionRate70() = if(Ab_sR_IL6>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab_sR_IL6 )   / ( 1.0 )    /Ab_sR_IL6,0)
	functionRate71() = if(Ab_sR_IL6_mw2ba2b802_9f07_4f4d_94c6_24c8de1a95cf>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab_sR_IL6_mw2ba2b802_9f07_4f4d_94c6_24c8de1a95cf )   / ( 1.0 )    /Ab_sR_IL6_mw2ba2b802_9f07_4f4d_94c6_24c8de1a95cf,0)
	functionRate72() = if(Ab_sR_IL6_mwedc1bc00_adf7_4144_a1c2_7dc1a9565dc2>0,  ( mwbd1d5bc3_d4b9_4aec_9b86_6f776da20a30 )   * ( Ab_sR_IL6_mwedc1bc00_adf7_4144_a1c2_7dc1a9565dc2 )   / ( 1.0 )    /Ab_sR_IL6_mwedc1bc00_adf7_4144_a1c2_7dc1a9565dc2,0)
	CRPSuppression____() = (CRP -Metabolite_40) / (-Metabolite_40 / 100)
	CRP__ofbaseline__() = CRP / Metabolite_40 * 100
	CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349() = mw92d854a7_8aaf_458e_b5e2_20a63ce9b654 * pSTAT3 / (mw08950572_81b0_4570_b2e4_b9c3462c1425 + pSTAT3)
	geneProduct() = mw92d854a7_8aaf_458e_b5e2_20a63ce9b654 * pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b / (mw08950572_81b0_4570_b2e4_b9c3462c1425 + pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b)
	functionRate36() = if((mw92d854a7_8aaf_458e_b5e2_20a63ce9b654 * pSTAT3 / (mw08950572_81b0_4570_b2e4_b9c3462c1425 + pSTAT3))>0,  ( mw862f1480_c60c_4863_a565_b2c1c77e238e )   * ( (mw92d854a7_8aaf_458e_b5e2_20a63ce9b654 * pSTAT3 / (mw08950572_81b0_4570_b2e4_b9c3462c1425 + pSTAT3)) )   / ( 1.0 )    /(mw92d854a7_8aaf_458e_b5e2_20a63ce9b654 * pSTAT3 / (mw08950572_81b0_4570_b2e4_b9c3462c1425 + pSTAT3)),0)
end functions
begin reaction rules
	reaction_1: CRP(ab,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e + IL6(crp,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab,genericMod~sR,il6!0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e functionRate0(),functionRate0m()
	reaction_2: IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab,genericMod~sR,il6!0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e + sgp130(genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab,genericMod~sR,il6!0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.sgp130(genericMod~0,il6!1)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e functionRate1(),functionRate1m()
	reaction_3: 0  -> IL6(crp,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e functionRate2()
	reaction_4: IL6(crp,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  functionRate3()
	reaction_5: CRP(ab,genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  functionRate4()
	reaction_6: IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + gp130(il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> IL6(crp,genericMod~0,gp130!1,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.gp130(il6!1)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate5(),functionRate5m()
	reaction_7: R(ab,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate6(),functionRate6m()
	reaction_8: IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + gp130(il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> IL6(crp,genericMod~0,gp130!1,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.gp130(il6!1)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate7(),functionRate7m()
	reaction_16: IL6(crp,genericMod~0,gp130!1,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.gp130(il6!1)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate8()
	reaction_9: STAT3(pmod~0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> STAT3(pmod~P)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate9()
	reaction_10: STAT3(pmod~P)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> STAT3(pmod~0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate10()
	reaction_15: R(ab,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  functionRate11()
	reaction_11: IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  functionRate12()
	reaction_12: IL6(crp,genericMod~0,gp130!1,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.gp130(il6!1)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  functionRate13()
	reaction_13: Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  functionRate14()
	reaction_14: 0  -> R(ab,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate15()
	reaction_41: IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 <-> IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca!1,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6!1)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate16(),functionRate16m()
	reaction_46: IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca!1,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6!1)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate17()
	reaction_42: STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446(genericMod~0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446(genericMod~pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate18()
	reaction_43: STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446(genericMod~pSTAT3_mw48867e93_f170_44e8_ac7a_185b23e1bf3b)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> STAT3_mw2b255f94_8018_4b99_bde8_918eeac45446(genericMod~0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate19()
	reaction_44: IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca!1,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6!1)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  functionRate20()
	reaction_45: Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  functionRate21()
	mwb675e13a_26c0_4b18_a8c3_0f5a62090ba4: Ractive()@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> IL6(crp,genericMod~0,gp130!1,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r!0,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.gp130(il6!1)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate22()
	mw64df7c9e_35da_4c7f_be56_c5dabfb060b6: Ractive_mw6cce2109_0e32_4dd9_98ec_41173e8ef07d()@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca!1,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6!1)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate23()
	mw391f3b8e_5649_4851_b2e2_782cb3e015b6: 0  -> gp130(il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate24()
	mw4a00a3a4_778f_4952_8100_2dc3cc2b7046: gp130(il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  functionRate25()
	mw6db30657_4e56_4c3a_8575_9c67393dde4f: 0  -> gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate26()
	mw6f470e13_f0e4_4294_83d8_59dd5670d10c: gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca(il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  functionRate27()
	mwfb35eca9_7afc_4ba8_a46c_738cab57eb9f: CRP(ab,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mw61d2af92_6da5_41ce_b90e_aa6f430e6ba1: IL6(crp,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(crp,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mw4c099d5c_200f_474e_8ec1_59e9223a8afd: CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + IL6(crp,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 <-> IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate30(),functionRate30m()
	mwbe8567ce_3349_4442_8b12_53cd9bc168e7: IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab,genericMod~sR,il6!0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mw12a9fa7e_a273_4c1e_b970_ed33f3a9a705: CRP(ab,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mw1046000b_e1e8_4f6f_82a1_532d2aa793bb: IL6(crp,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mw8e8b65a8_6830_4091_9a40_19645e8fe554: IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab,genericMod~sR,il6!0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mwa812f08f_1035_42bd_82d2_72d691308f88: CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + IL6(crp,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate35(),functionRate35m()
	mwab0012ac_e5f2_4904_9893_820fd210402e: CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349(genericMod~0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349(genericMod~CRPExtracellular)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate36()
	mwcdc24bd4_d9e4_47fe_8300_d222d853111c: CRP(ab,genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> CRP_mwd5313618_89eb_4c8c_bc82_66f10f966349(genericMod~CRPExtracellular)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mwff2ebcf1_dcf1_47b9_9cac_7306fc6f7f76: 0  -> CRP(ab,genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e functionRate38()
	mw1c5a5ff7_5130_490f_a740_6a744ccf8a94: sgp130(genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sgp130(genericMod~sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mw7b56053c_7256_4703_a8c3_4fd46b2c23d0: sgp130(genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> sgp130(genericMod~sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mw8be158f1_ea81_45bf_80d4_6e31cd83fe6c: sgp130(genericMod~sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 <-> IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.sgp130(genericMod~sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,il6!1)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate41(),functionRate41m()
	mwd77df15b_fed7_41a8_a3d6_b0f6c590c5f6: IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + sgp130(genericMod~sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.sgp130(genericMod~sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,il6!1)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate42(),functionRate42m()
	mw01babcdf_0f03_46b0_81b1_201cc846e361: IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab,genericMod~sR,il6!0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.sgp130(genericMod~0,il6!1)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(crp!0,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6!0)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.sgp130(genericMod~sgp130_mwd65b5b39_dc1b_4e77_a999_67277a880e5e,il6!1)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mwae5dbb44_7de5_46ab_8c20_ac4f8956b0f0: IL6(crp!0,genericMod~0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab,genericMod~sR,il6!0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.sgp130(genericMod~0,il6!1)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> IL6(crp!0,genericMod~IL6_mw0adf3eb4_a196_4c48_b10d_4e9e9faaf9e1,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130!1)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.sgp130(genericMod~sgp130_mw147d30ec_478e_4090_b496_128a131d29eb,il6!1)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mw432fde6e_59ab_47f0_9fb1_086433a602e3: 0  -> CRP(ab,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e functionRate45()
	mw41c27823_d7ee_4554_9eac_3d5beec8e854: CRP(ab,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  functionRate46()
	mw50c6744c_e883_4612_8663_e38750cbad1b: 0  -> sgp130(genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e functionRate47()
	mwb6a99eb5_ea4c_4733_98dd_1daf5ec6b0db: sgp130(genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  functionRate48()
	mw1ce0c484_681f_4d85_8ffe_392d0c100cfa: 0  -> IL6(crp,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate49()
	mwf913ea0b_785a_4701_ac91_b18ab5dd5a89: IL6(crp,genericMod~IL6_mw2c9b0499_3325_4394_8af3_bbf653a944a0,gp130,gp130_mw8c9107e6_f51d_442d_b2dc_2bfdbb8482ca,r,sgp130)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  functionRate50()
	mw71d90b81_8211_4039_8807_12a7fe03206c: CRP(ab,genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> CRP(ab,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e + CRP(ab,genericMod~0,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e functionRate51()
	mwdf4ba845_7271_4ada_b43f_fdac83df3b5c: Ab(crp,genericMod~0,r)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> Ab(crp,genericMod~Ab_mwbc2f5464_81e5_43fd_8b39_f5a2756af72f,r)@mw8fbcbf3b_47d8_4adc_8ad4_f9fc547d3e87 mwf67caf9d_2f4b_4986_abf2_e6090bbb72ce,mw4aea26f6_8860_414c_97f5_40d325196f2e
	mwb1879013_5fcd_490c_8b01_eaf84df15b9a: Ab(crp,genericMod~0,r)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e + CRP(ab,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> Ab(crp!0,genericMod~0,r)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab!0,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e functionRate53(),functionRate53m()
	mw30abb016_4300_4f40_a1b3_f865d0a45707: Ab(crp!0,genericMod~0,r)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab!0,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  functionRate54()
	mwba7f4605_8571_439b_b3ab_eb0b43808db8: Ab(crp,genericMod~0,r)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  functionRate55()
	mw8b4e96ed_0bcc_4ad6_b560_366e173a6e6b: Ab(crp!0,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab!0,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  functionRate56()
	mwa3cb4a9b_d628_4807_8847_bdcd9b40c7f1: Ab(crp,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 + CRP(ab,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 <-> Ab(crp!0,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab!0,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 functionRate57(),functionRate57m()
	mw8fb6c0a7_b05d_4c2a_8866_77eb81f063d1: Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + CRP(ab,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> Ab(crp!0,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.CRP(ab!0,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate58(),functionRate58m()
	mw3e76b10b_5420_4828_8c70_b91b767132d0: Ab(crp!0,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.CRP(ab!0,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  functionRate59()
	mw131e3c9d_e77d_48c0_bdbb_77b2c10aaf3d: Ab(crp,genericMod~0,r)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mw640ca705_e089_4c64_a5f4_9562317e8c76,mw43ccad8c_cabf_4eaf_90d5_e06ae43be2cb
	mw14940d1f_6a1f_47cb_8170_801ba645f4c1: Ab(crp,genericMod~0,r)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> Ab(crp,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mw9f83bdd3_3aa1_47ff_abd6_54e5ce60704a,mwa071fdbe_d498_4620_a7a4_940aa31c8161
	mwa2f4d966_ae2c_4ed2_b522_12755f12ff15: Ab(crp!0,genericMod~0,r)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab!0,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> Ab(crp!0,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.CRP(ab!0,genericMod~sR_mw2e464cf3_a09c_4b7c_9f3c_06720016a48e,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mw640ca705_e089_4c64_a5f4_9562317e8c76,mw43ccad8c_cabf_4eaf_90d5_e06ae43be2cb
	mw700e677e_d3b6_4a97_991f_279605a9abeb: Ab(crp!0,genericMod~0,r)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e.CRP(ab!0,genericMod~sR,il6)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> Ab(crp!0,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5.CRP(ab!0,genericMod~sR_mwd31f52cc_04e7_40e0_885f_c7b2d9e62215,il6)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mw9f83bdd3_3aa1_47ff_abd6_54e5ce60704a,mwa071fdbe_d498_4620_a7a4_940aa31c8161
	mw2ae288ab_7d03_4a84_a024_c711ad2b77e6: Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  functionRate64()
	mw9629d028_fcc0_4886_9e4d_36eecdb0381d: Ab(crp,genericMod~Ab_mwf7796221_1fea_4274_a93e_c00adbf5778c,r)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  functionRate65()
	mw6b46c550_674f_4857_b947_d31221cd8dd3: Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e + R(ab,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e <-> Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab!0,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e functionRate66(),functionRate66m()
	mw920e142e_b2c4_42b2_88f4_9f68cc50142e: Ab(crp,genericMod~Ab_mw3667a5e1_02c9_44a0_acb4_b0431faa822d,r!0)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e.R(ab!0,il6)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  functionRate67()
	mw1b09ae22_e4c7_4830_b566_f263cf4e3f9c: Ab_sR_IL6(genericMod~0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> Ab_sR_IL6(genericMod~Ab_sR_IL6_mwedc1bc00_adf7_4144_a1c2_7dc1a9565dc2)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mwf9c93372_1c4e_4988_b8a7_7b9981192b30: Ab_sR_IL6(genericMod~0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e <-> Ab_sR_IL6(genericMod~Ab_sR_IL6_mw2ba2b802_9f07_4f4d_94c6_24c8de1a95cf)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e mwc67e1333_079a_4bea_9b4f_0a1b15ddd7bb,mwce10678d_8197_408c_ad47_1daec8104cd8
	mw5e1e306a_63ed_43a8_b79f_b403516e7963: Ab_sR_IL6(genericMod~0)@mw53ffe9e6_beef_45c4_90a5_a79197ed506e -> 0  functionRate70()
	mwfeae4233_1272_453f_a97f_70982c445b43: Ab_sR_IL6(genericMod~Ab_sR_IL6_mw2ba2b802_9f07_4f4d_94c6_24c8de1a95cf)@mw88ca8d9a_f5cf_41bf_9d9d_fc48f6e1a19e -> 0  functionRate71()
	mwe84cc3ad_af35_43a8_aa6a_9f68a6d68185: Ab_sR_IL6(genericMod~Ab_sR_IL6_mwedc1bc00_adf7_4144_a1c2_7dc1a9565dc2)@mwe9501423_9fb4_494b_b5b6_288f3fcb17b5 -> 0  functionRate72()
end reaction rules
end model
