###
#@BQB_HAS_VERSION:['http://identifiers.org/obo.go/GO:0000165']
#@BQM_IS:['http://identifiers.org/biomodels.db/BIOMD0000000019', 'http://identifiers.org/biomodels.db/MODEL6617455076']
#@BQB_OCCURS_IN:['http://identifiers.org/taxonomy/9606']
#@BQB_IS_VERSION_OF:['http://identifiers.org/reactome/REACT_9417.3']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/11923843']
#@creatorEmail:'lenov@ebi.ac.uk'
#@creatorName:'LeNovreNicolas'
#@notes:'This is an atomized translation of an SBML model created on 21/01/2014.The original model has 100 species and 125 reactions. The translated model has 25 species and 125 rules'
###
begin model
begin parameters
	k1 0.003
	kr1 0.228
	kr2 6.0
	k2 0.001
	k3 60.0
	kr3 0.6
	k4 1.038e-05
	kr4 0.0996
	k6 0.003
	kr6 0.3
	k7 0.003
	k8 0.0001
	kr8 12.0
	k10 3.25581
	kr10 0.66
	kr11 6.0
	k11 0.001
	kr12 0.6
	k12 60.0
	k13 130.2
	k14 0.0001
	kr14 12.0
	k15 600000.0
	kr16 16.5
	k16 0.001
	kr17 3.6
	k17 0.001
	kr18 78.0
	k18 0.0015
	kr19 1e-05
	k19 30.0
	kr20 24.0
	k20 0.00021
	k21 1.38
	kr21 2.2e-05
	k22 0.0021
	kr22 6.0
	k23 360.0
	kr23 36.0
	k24 0.001
	kr24 33.0
	kr25 1.284
	k25 0.001
	k28 0.0001
	kr28 0.318
	k29 60.0
	kr29 7e-05
	kr32 2.4e-05
	k32 6.0
	k33 12.0
	kr33 0.0021
	k34 1.8
	kr34 0.00045
	k35 0.09
	kr35 0.00045
	Vm36 61200.0
	Km36 2e+14
	k37 18.0
	kr37 9e-05
	k40 0.003
	kr40 3.84
	kr41 2.574
	k41 0.003
	k42 0.0071
	kr42 12.0
	k43 60.0
	kr44 1.0998
	k44 0.00111
	k45 210.0
	k47 174.0
	kr48 48.0
	k48 0.00143
	k49 3.48
	kr50 30.0
	k50 2.5e-05
	k52 0.00534
	kr52 1.98
	k53 960.0
	k55 342.0
	kr56 36.0
	k56 0.00145
	k57 16.2
	kr58 30.0
	k58 0.0005
	k59 18.0
	k60 0.04002
	k61 0.01002
	RT 50000.0
end parameters
begin compartments
	c1  3  1.0
	c2  3  1.0
	c3  3  4.3e-06
	cell 3 1.0
end compartments
begin molecule types
	EGF(egfr,iMod~I~U)
	EGFR(egf,egfr,gap,grb2,iMod~U~I,mMod~U~M,prot,ras,shc)
	Prot(egfr,iMod~I~U)
	EGFideg()
	GAP(egfr)
	Grb2(egfr,shc,sos)
	Sos(grb2)
	Shc(egfr,grb2,mMod~M~U)
	Raf(iMod~I~U,mMod~M~U,mek,phosphotase1,ras)
	Phosphotase1(raf)
	MEK(erk,iMod~I~U,phosphatase2,phospho~P~U,raf)
	Phosphatase2(mek)
	ERK(iMod~I~U,mek,phospho~P~U,phosphotase3)
	Phosphotase3(erk)
	EGFRideg()
	EGF_EGFRim2deg()
	t_Rafm()
	t_Ras_GTP()
	t_MEK_PP()
	t_ERK_PP()
	t_SHC_P_t()
	t_EGF_EGFRm()
	Ras(egfr,gdp,gtp,iMod~I~U,raf)
	GTP(mMod~M~U,ras)
	GDP(ras)
end molecule types
begin seed species
	####@IS:['EGF']
	@c1:$EGF(egfr,iMod~U) 4962.0
	@c1:EGFR(egf,egfr,gap,grb2,iMod~U,mMod~U,prot,ras,shc) 50000.0
	@c2:Prot(egfr,iMod~U) 81000.0
	@c2:GAP(egfr) 12000.0
	@c2:Grb2(egfr,shc,sos) 11000.0
	@c2:Sos(grb2) 26300.0
	@c2:GDP(ras!0).Ras(egfr,gdp!0,gtp,iMod~U,raf) 72000.0
	@c2:Grb2(egfr,shc,sos!0).Sos(grb2!0) 40000.0
	@c2:Shc(egfr,grb2,mMod~U) 101000.0
	@c2:Raf(iMod~U,mMod~U,mek,phosphotase1,ras) 40000.0
	@c2:Phosphotase1(raf) 40000.0
	@c2:MEK(erk,iMod~U,phosphatase2,phospho~U,raf) 22000000.0
	@c2:Phosphatase2(mek) 40000.0
	@c2:ERK(iMod~U,mek,phospho~U,phosphotase3) 21000000.0
	@c2:Phosphotase3(erk) 10000000.0
end seed species
begin observables
	Species ERK_P ERK(iMod~U,mek,phospho~P,phosphotase3) #ERK-P
	Species MEKi_P_Pase2i MEK(erk,iMod~I,phosphatase2!0,phospho~P,raf).Phosphatase2(mek!0) #MEKi-P-P'ase2i
	Species EGF_EGFRm2_GAP_Shcm_Grb2_Sos EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc!6,sos!7).Shc(egfr!5,grb2!6,mMod~M).Sos(grb2!7) #EGF-EGFR*^2-GAP-Shc*-Grb2-Sos
	Species EGF_EGFRim2_GAP_Grb2 EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc,sos) #EGF-EGFRi*^2-GAP-Grb2
	Species Rafm_Pase Phosphotase1(raf!0).Raf(iMod~U,mMod~M,mek,phosphotase1!0,ras) #Raf*-P'ase
	Species ERK_P_Pase3 ERK(iMod~U,mek,phospho~P,phosphotase3!0).Phosphotase3(erk!0) #ERK-P-P'ase3
	Species Shcm Shc(egfr,grb2,mMod~M) #Shc*
	Species EGFR EGFR(egf,egfr,gap,grb2,iMod~U,mMod~U,prot,ras,shc) #EGFR
	Species MEK_Rafm MEK(erk,iMod~U,phosphatase2,phospho~U,raf!0).Raf(iMod~U,mMod~M,mek!0,phosphotase1,ras) #MEK-Raf*
	Species Rafim Raf(iMod~I,mMod~M,mek,phosphotase1,ras) #Rafi*
	Species EGF_EGFRm2_GAP_Grb2 EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc,sos) #EGF-EGFR*^2-GAP-Grb2
	Species Shcm_Grb2_Sos Grb2(egfr,shc!0,sos!1).Shc(egfr,grb2!0,mMod~M).Sos(grb2!1) #Shc*-Grb2-Sos
	Species GAP GAP(egfr) #GAP
	Species EGFi EGF(egfr,iMod~I) #EGFi
	Species Shcm_Grb2 Grb2(egfr,shc!0,sos).Shc(egfr,grb2!0,mMod~M) #Shc*-Grb2
	Species EGF_EGFR2 EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~U,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~U,prot,ras,shc) #EGF-EGFR^2
	Species MEK_P MEK(erk,iMod~U,phosphatase2,phospho~P,raf) #MEK-P
	Species Phosphotase1 Phosphotase1(raf) #Phosphotase1
	Species EGF_EGFRim2_GAP_Shcm_Grb2_Sos_Ras_GTP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3).GTP(mMod~U,ras!7).Grb2(egfr!4,shc!8,sos!9).Ras(egfr!5,gdp,gtp!7,iMod~U,raf).Shc(egfr!6,grb2!8,mMod~M).Sos(grb2!9) #EGF-EGFRi*^2-GAP-Shc*-Grb2-Sos-Ras-GTP
	Species ERKi_P_MEKi_PP ERK(iMod~I,mek!0,phospho~P,phosphotase3).MEK(erk!0,iMod~I,phosphatase2,phospho~P,raf) #ERKi-P-MEKi-PP
	Species ERKi_P_Pase3i ERK(iMod~I,mek,phospho~P,phosphotase3!0).Phosphotase3(erk!0) #ERKi-P-P'ase3i
	Species Rafim_Pase Phosphotase1(raf!0).Raf(iMod~I,mMod~M,mek,phosphotase1!0,ras) #Rafi*-P'ase
	Species Phosphotase3 Phosphotase3(erk) #Phosphotase3
	Species ERK_PP_Pase3 ERK(iMod~U,mek,phospho~P,phosphotase3!0).Phosphotase3(erk!0) #ERK-PP-P'ase3
	Species t_Ras_GTP t_Ras_GTP() #t_Ras_GTP
	Species EGF_EGFRm2_GAP_Shc EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc!4).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).Shc(egfr!4,grb2,mMod~U) #EGF-EGFR*^2-GAP-Shc
	Species EGF_EGFRi2 EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap,grb2,iMod~I,mMod~U,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~U,prot,ras,shc) #EGF-EGFRi^2
	Species Phosphatase2 Phosphatase2(mek) #Phosphatase2
	Species ERK_P_MEK_PP ERK(iMod~U,mek!0,phospho~P,phosphotase3).MEK(erk!0,iMod~U,phosphatase2,phospho~P,raf) #ERK-P-MEK-PP
	Species Sos Sos(grb2) #Sos
	Species Proti Prot(egfr,iMod~I) #Proti
	Species Grb2 Grb2(egfr,shc,sos) #Grb2
	Species EGF_EGFRim2deg EGF_EGFRim2deg() #EGF-EGFRi*^2deg
	Species EGF_EGFRim2_GAP_Grb2_Sos_Ras_GTP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras!7,shc).GAP(egfr!3).GTP(mMod~U,ras!5).Grb2(egfr!4,shc,sos!6).Ras(egfr!7,gdp,gtp!5,iMod~U,raf).Sos(grb2!6) #EGF-EGFRi*^2-GAP-Grb2-Sos-Ras-GTP
	Species EGF_EGFRm2 EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc) #EGF-EGFR*^2
	Species EGF_EGFRm2_GAP_Grb2_Sos_Ras_GDP_Prot EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).GDP(ras!7).Grb2(egfr!4,shc,sos!8).Prot(egfr!5,iMod~I).Ras(egfr!6,gdp!7,gtp,iMod~U,raf).Sos(grb2!8) #EGF-EGFR*^2-GAP-Grb2-Sos-Ras-GDP-Prot
	Species EGF_EGFRim2_GAP_Shcm_Grb2_Sos EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc!6,sos!7).Shc(egfr!5,grb2!6,mMod~M).Sos(grb2!7) #EGF-EGFRi*^2-GAP-Shc*-Grb2-Sos
	Species EGF_EGFRi EGF(egfr!0,iMod~U).EGFR(egf!0,egfr,gap,grb2,iMod~I,mMod~U,prot,ras,shc) #EGF-EGFRi
	Species Raf_Ras_GTP GTP(mMod~M,ras!0).Raf(iMod~U,mMod~U,mek,phosphotase1,ras!1).Ras(egfr,gdp,gtp!0,iMod~U,raf!1) #Raf-Ras-GTP
	Species t_MEK_PP t_MEK_PP() #t_MEK_PP
	Species EGFRi EGFR(egf,egfr,gap,grb2,iMod~I,mMod~U,prot,ras,shc) #EGFRi
	Species Ras_GDP GDP(ras!0).Ras(egfr,gdp!0,gtp,iMod~U,raf) #Ras-GDP
	Species EGF_EGFRm2_GAP_Grb2_Sos_Prot EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc,sos!6).Prot(egfr!5,iMod~I).Sos(grb2!6) #EGF-EGFR*^2-GAP-Grb2-Sos-Prot
	Species Rasi_GTP GTP(mMod~U,ras!0).Ras(egfr,gdp,gtp!0,iMod~I,raf) #Rasi-GTP
	Species t_EGF_EGFRm t_EGF_EGFRm() #t_EGF_EGFR*
	Species EGF_EGFRm2_GAP_Grb2_Sos_Ras_GTP_Prot EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).GTP(mMod~U,ras!7).Grb2(egfr!4,shc,sos!8).Prot(egfr!5,iMod~I).Ras(egfr!6,gdp,gtp!7,iMod~U,raf).Sos(grb2!8) #EGF-EGFR*^2-GAP-Grb2-Sos-Ras-GTP-Prot
	Species EGF_EGFRim2_GAP_Grb2_Sos_Ras_GDP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3).GDP(ras!6).Grb2(egfr!4,shc,sos!7).Ras(egfr!5,gdp!6,gtp,iMod~U,raf).Sos(grb2!7) #EGF-EGFRi*^2-GAP-Grb2-Sos-Ras-GDP
	Species EGF_EGFR EGF(egfr!0,iMod~U).EGFR(egf!0,egfr,gap,grb2,iMod~U,mMod~U,prot,ras,shc) #EGF-EGFR
	Species Rasi_GTPm GTP(mMod~M,ras!0).Ras(egfr,gdp,gtp!0,iMod~I,raf) #Rasi-GTP*
	Species MEK_P_Rafm MEK(erk,iMod~U,phosphatase2,phospho~P,raf!0).Raf(iMod~U,mMod~M,mek!0,phosphotase1,ras) #MEK-P-Raf*
	Species ERKi_PP ERK(iMod~I,mek,phospho~P,phosphotase3) #ERKi-PP
	Species t_SHC_P_t t_SHC_P_t() #t_SHC_P_t
	Species EGFideg EGFideg() #EGFideg
	Species EGF_EGFRm2_GAP_Grb2_Sos EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc,sos!5).Sos(grb2!5) #EGF-EGFR*^2-GAP-Grb2-Sos
	Species Prot Prot(egfr,iMod~U) #Prot
	Species EGF_EGFRm2_GAP_Shcm_Grb2 EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc!6,sos).Shc(egfr!5,grb2!6,mMod~M) #EGF-EGFR*^2-GAP-Shc*-Grb2
	Species EGF_EGFRm2_GAP_Shcm EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc!4).GAP(egfr!3).Shc(egfr!4,grb2,mMod~M) #EGF-EGFR*^2-GAP-Shc*
	Species EGF_EGFRm2_GAP_Shcm_Grb2_Prot EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc!6).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc!7,sos).Prot(egfr!5,iMod~I).Shc(egfr!6,grb2!7,mMod~M) #EGF-EGFR*^2-GAP-Shc*-Grb2-Prot
	Species MEKi_PP MEK(erk,iMod~I,phosphatase2,phospho~P,raf) #MEKi-PP
	Species MEKi_PP_Pase2i MEK(erk,iMod~I,phosphatase2!0,phospho~P,raf).Phosphatase2(mek!0) #MEKi-PP-P'ase2i
	Species EGF_EGFRm2_GAP_Grb2_Sos_Ras_GDP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).GDP(ras!6).Grb2(egfr!4,shc,sos!7).Ras(egfr!5,gdp!6,gtp,iMod~U,raf).Sos(grb2!7) #EGF-EGFR*^2-GAP-Grb2-Sos-Ras-GDP
	Species Ras_GTPm GTP(mMod~M,ras!0).Ras(egfr,gdp,gtp!0,iMod~U,raf) #Ras-GTP*
	Species t_Rafm t_Rafm() #t_Raf*
	Species EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GDP_Prot EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc!7).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).GDP(ras!8).Grb2(egfr!4,shc!9,sos!10).Prot(egfr!5,iMod~I).Ras(egfr!6,gdp!8,gtp,iMod~U,raf).Shc(egfr!7,grb2!9,mMod~M).Sos(grb2!10) #EGF-EGFR*^2-GAP-Shc*-Grb2-Sos-Ras-GDP-Prot
	Species MEKi_Rafim MEK(erk,iMod~I,phosphatase2,phospho~U,raf!0).Raf(iMod~I,mMod~M,mek!0,phosphotase1,ras) #MEKi-Rafi*
	Species ERK_MEK_PP ERK(iMod~U,mek!0,phospho~U,phosphotase3).MEK(erk!0,iMod~U,phosphatase2,phospho~P,raf) #ERK-MEK-PP
	Species MEK_PP MEK(erk,iMod~U,phosphatase2,phospho~P,raf) #MEK-PP
	Species Shc Shc(egfr,grb2,mMod~U) #Shc
	Species EGF_EGFRim2_GAP_Shc EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3).Shc(egfr!4,grb2,mMod~U) #EGF-EGFRi*^2-GAP-Shc
	Species MEKi_P_Rafim MEK(erk,iMod~I,phosphatase2,phospho~P,raf!0).Raf(iMod~I,mMod~M,mek!0,phosphotase1,ras) #MEKi-P-Rafi*
	Species ERKi_PP_Pase3i ERK(iMod~I,mek,phospho~P,phosphotase3!0).Phosphotase3(erk!0) #ERKi-PP-P'ase3i
	Species Raf Raf(iMod~U,mMod~U,mek,phosphotase1,ras) #Raf
	Species Ras_GTP GTP(mMod~U,ras!0).Ras(egfr,gdp,gtp!0,iMod~U,raf) #Ras-GTP
	Species EGF_EGFRim2_GAP_Grb2_Sos EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc,sos!5).Sos(grb2!5) #EGF-EGFRi*^2-GAP-Grb2-Sos
	Species EGF EGF(egfr,iMod~U) #EGF
	Species Grb2_Sos Grb2(egfr,shc,sos!0).Sos(grb2!0) #Grb2-Sos
	Species ERKi_MEKi_PP ERK(iMod~I,mek!0,phospho~U,phosphotase3).MEK(erk!0,iMod~I,phosphatase2,phospho~P,raf) #ERKi-MEKi-PP
	Species t_ERK_PP t_ERK_PP() #t_ERK_PP
	Species EGF_EGFRim2_GAP_Shcm_Grb2_Sos_Ras_GDP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3).GDP(ras!7).Grb2(egfr!4,shc!8,sos!9).Ras(egfr!5,gdp!7,gtp,iMod~U,raf).Shc(egfr!6,grb2!8,mMod~M).Sos(grb2!9) #EGF-EGFRi*^2-GAP-Shc*-Grb2-Sos-Ras-GDP
	Species ERK_PP ERK(iMod~U,mek,phospho~P,phosphotase3) #ERK-PP
	Species EGF_EGFRim2_GAP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3) #EGF-EGFRi*^2-GAP
	Species ERK ERK(iMod~U,mek,phospho~U,phosphotase3) #ERK
	Species EGF_EGFRm2_GAP_Grb2_Sos_Ras_GTP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).GTP(mMod~U,ras!6).Grb2(egfr!4,shc,sos!7).Ras(egfr!5,gdp,gtp!6,iMod~U,raf).Sos(grb2!7) #EGF-EGFR*^2-GAP-Grb2-Sos-Ras-GTP
	Species MEK MEK(erk,iMod~U,phosphatase2,phospho~U,raf) #MEK
	Species Rafm Raf(iMod~U,mMod~M,mek,phosphotase1,ras) #Raf*
	Species EGFRideg EGFRideg() #EGFRideg
	Species Rafi_Rasi_GTP GTP(mMod~U,ras!0).Raf(iMod~I,mMod~U,mek,phosphotase1,ras!1).Ras(egfr,gdp,gtp!0,iMod~I,raf!1) #Rafi-Rasi-GTP
	Species EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GDP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).GDP(ras!7).Grb2(egfr!4,shc!8,sos!9).Ras(egfr!5,gdp!7,gtp,iMod~U,raf).Shc(egfr!6,grb2!8,mMod~M).Sos(grb2!9) #EGF-EGFR*^2-GAP-Shc*-Grb2-Sos-Ras-GDP
	Species MEK_PP_Pase2 MEK(erk,iMod~U,phosphatase2!0,phospho~P,raf).Phosphatase2(mek!0) #MEK-PP-P'ase2
	Species EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GTP_Prot EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc!7).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).GTP(mMod~U,ras!8).Grb2(egfr!4,shc!9,sos!10).Prot(egfr!5,iMod~I).Ras(egfr!6,gdp,gtp!8,iMod~U,raf).Shc(egfr!7,grb2!9,mMod~M).Sos(grb2!10) #EGF-EGFR*^2-GAP-Shc*-Grb2-Sos-Ras-GTP-Prot
	Species EGF_EGFRm2_GAP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3) #EGF-EGFR*^2-GAP
	Species EGF_EGFRm2_GAP_Grb2_Prot EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc,sos).Prot(egfr!5,iMod~I) #EGF-EGFR*^2-GAP-Grb2-Prot
	Species EGF_EGFRim2_GAP_Shcm EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3).Shc(egfr!4,grb2,mMod~M) #EGF-EGFRi*^2-GAP-Shc*
	Species MEK_P_Pase2 MEK(erk,iMod~U,phosphatase2!0,phospho~P,raf).Phosphatase2(mek!0) #MEK-P-P'ase2
	Species ERKi_P ERK(iMod~I,mek,phospho~P,phosphotase3) #ERKi-P
	Species EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GTP EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).GTP(mMod~U,ras!7).Grb2(egfr!4,shc!8,sos!9).Ras(egfr!5,gdp,gtp!7,iMod~U,raf).Shc(egfr!6,grb2!8,mMod~M).Sos(grb2!9) #EGF-EGFR*^2-GAP-Shc*-Grb2-Sos-Ras-GTP
	Species EGF_EGFRim2 EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc) #EGF-EGFRi*^2
	Species EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Prot EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc!6).EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc!7,sos!8).Prot(egfr!5,iMod~I).Shc(egfr!6,grb2!7,mMod~M).Sos(grb2!8) #EGF-EGFR*^2-GAP-Shc*-Grb2-Sos-Prot
	Species EGF_EGFRim2_GAP_Shcm_Grb2 EGF(egfr!0,iMod~U).EGF(egfr!1,iMod~U).EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5).EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc).GAP(egfr!3).Grb2(egfr!4,shc!6,sos).Shc(egfr!5,grb2!6,mMod~M) #EGF-EGFRi*^2-GAP-Shc*-Grb2
	Species MEKi_P MEK(erk,iMod~I,phosphatase2,phospho~P,raf) #MEKi-P
end observables
begin functions
	functionRate35 = Vm36 / (Km36 + Shcm)
	functionRate42 = if(k43>= 0,k43,0)
	functionRate42m = if(k43< 0,-(k43),0)
	functionRate44 = if(k45>= 0,k45,0)
	functionRate44m = if(k45< 0,-(k45),0)
	functionRate46 = if(k47>= 0,k47,0)
	functionRate46m = if(k47< 0,-(k47),0)
	functionRate48 = if(k49>= 0,k49,0)
	functionRate48m = if(k49< 0,-(k49),0)
	functionRate50 = if(k49>= 0,k49,0)
	functionRate50m = if(k49< 0,-(k49),0)
	functionRate52 = if(k53>= 0,k53,0)
	functionRate52m = if(k53< 0,-(k53),0)
	functionRate54 = if(k55>= 0,k55,0)
	functionRate54m = if(k55< 0,-(k55),0)
	functionRate56 = if(k57>= 0,k57,0)
	functionRate56m = if(k57< 0,-(k57),0)
	functionRate58 = if(k59>= 0,k59,0)
	functionRate58m = if(k59< 0,-(k59),0)
	functionRate84 = if(k43>= 0,k43,0)
	functionRate84m = if(k43< 0,-(k43),0)
	functionRate86 = if(k45>= 0,k45,0)
	functionRate86m = if(k45< 0,-(k45),0)
	functionRate88 = if(k47>= 0,k47,0)
	functionRate88m = if(k47< 0,-(k47),0)
	functionRate90 = if(k49>= 0,k49,0)
	functionRate90m = if(k49< 0,-(k49),0)
	functionRate92 = if(k49>= 0,k49,0)
	functionRate92m = if(k49< 0,-(k49),0)
	functionRate94 = if(k53>= 0,k53,0)
	functionRate94m = if(k53< 0,-(k53),0)
	functionRate96 = if(k55>= 0,k55,0)
	functionRate96m = if(k55< 0,-(k55),0)
	functionRate98 = if(k57>= 0,k57,0)
	functionRate98m = if(k57< 0,-(k57),0)
	functionRate100 = if(k59>= 0,k59,0)
	functionRate100m = if(k59< 0,-(k59),0)
	C = RT / (kr1 / (k1 * EGF) + 1)
	arjt_Ras_GTP = Raf_Ras_GTP + Ras_GTP + Rafi_Rasi_GTP + Rasi_GTP
	arjt_EGF_EGFRm = EGF_EGFRm2 + EGF_EGFRm2_GAP_Grb2_Prot + EGF_EGFRm2_GAP + EGF_EGFRm2_GAP_Grb2 + EGF_EGFRm2_GAP_Grb2_Sos + EGF_EGFRm2_GAP_Grb2_Sos_Ras_GDP + EGF_EGFRm2_GAP_Grb2_Sos_Ras_GTP + EGF_EGFRm2_GAP_Shc + EGF_EGFRm2_GAP_Shcm + EGF_EGFRm2_GAP_Shcm_Grb2 + EGF_EGFRm2_GAP_Shcm_Grb2_Sos + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GDP + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GTP + EGF_EGFRm2_GAP_Grb2_Sos_Prot + EGF_EGFRm2_GAP_Grb2_Sos_Ras_GDP_Prot + EGF_EGFRm2_GAP_Grb2_Sos_Ras_GTP_Prot + EGF_EGFRm2_GAP_Shcm_Grb2_Prot + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Prot + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GDP_Prot + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GTP_Prot + EGF_EGFRim2 + EGF_EGFRi2 + EGF_EGFRim2_GAP + EGF_EGFRim2_GAP_Grb2 + EGF_EGFRim2_GAP_Grb2_Sos + EGF_EGFRim2_GAP_Grb2_Sos_Ras_GDP + EGF_EGFRim2_GAP_Grb2_Sos_Ras_GTP + EGF_EGFRim2_GAP_Shc + EGF_EGFRim2_GAP_Shcm + EGF_EGFRim2_GAP_Shcm_Grb2 + EGF_EGFRim2_GAP_Shcm_Grb2_Sos + EGF_EGFRim2_GAP_Shcm_Grb2_Sos_Ras_GDP + EGF_EGFRim2_GAP_Shcm_Grb2_Sos_Ras_GTP
	arjt_MEK_PP = MEK_PP + MEKi_PP
	arjt_ERK_PP = ERK_PP + ERKi_PP
	arjt_SHC_P_t = EGF_EGFRm2_GAP_Shcm + EGF_EGFRm2_GAP_Shcm_Grb2 + EGF_EGFRm2_GAP_Shcm_Grb2_Sos + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GDP + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GTP + Shcm_Grb2_Sos + Shcm_Grb2 + Shcm + EGF_EGFRm2_GAP_Shcm_Grb2_Prot + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Prot + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GDP_Prot + EGF_EGFRm2_GAP_Shcm_Grb2_Sos_Ras_GTP_Prot + EGF_EGFRim2_GAP_Shcm + EGF_EGFRim2_GAP_Shcm_Grb2 + EGF_EGFRim2_GAP_Shcm_Grb2_Sos + EGF_EGFRim2_GAP_Shcm_Grb2_Sos_Ras_GDP + EGF_EGFRim2_GAP_Shcm_Grb2_Sos_Ras_GTP
	arjt_Rafm = Rafm + Rafm_Pase + MEK_Rafm + MEK_P_Rafm + Rafim + Rafim_Pase + MEKi_Rafim + MEKi_P_Rafim
	k5 = if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55)))
	functionRate4 = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))>= 0,(if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55)))),0)
	functionRate4m = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))< 0,-((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))),0)
	functionRate106 = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))>= 0,(if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55)))),0)
	functionRate106m = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))< 0,-((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))),0)
	functionRate109 = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))>= 0,(if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55)))),0)
	functionRate109m = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))< 0,-((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))),0)
	functionRate112 = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))>= 0,(if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55)))),0)
	functionRate112m = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))< 0,-((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))),0)
	functionRate115 = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))>= 0,(if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55)))),0)
	functionRate115m = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))< 0,-((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))),0)
	functionRate118 = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))>= 0,(if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55)))),0)
	functionRate118m = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))< 0,-((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))),0)
	functionRate121 = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))>= 0,(if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55)))),0)
	functionRate121m = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))< 0,-((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))),0)
	functionRate124 = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))>= 0,(if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55)))),0)
	functionRate124m = if((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))< 0,-((if(((RT / (kr1 / (k1 * EGF) + 1))<3100),(1.55),if(((RT / (kr1 / (k1 * EGF) + 1))>100000),(0.2),((RT / (kr1 / (k1 * EGF) + 1))*-1.350000e-05+1.55))))),0)
end functions
begin reaction rules
	ERK(iMod~I,mek,phospho~P,phosphotase3!0)@c2.Phosphotase3(erk!0)@c2 <-> ERK(iMod~U,mek,phospho~U,phosphotase3)@c2 + Phosphotase3(erk)@c2 functionRate100(),functionRate100m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2.Prot(egfr!5,iMod~I)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2 + Prot(egfr,iMod~I)@c2 functionRate4(),functionRate4m()
	EGF(egfr!0,iMod~U)@c2.EGFR(egf!0,egfr,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c2 + EGF(egfr!0,iMod~U)@c2.EGFR(egf!0,egfr,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c2 k2*2,kr2
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp,gtp!6,iMod~U,raf)@c2.Sos(grb2!7)@c2 + Prot(egfr,iMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc,sos!8)@c2.Prot(egfr!5,iMod~I)@c2.Ras(egfr!6,gdp,gtp!7,iMod~U,raf)@c2.Sos(grb2!8)@c2 k4,kr4
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2 + Shc(egfr,grb2,mMod~M)@c2 k37,kr37
	MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 + ERK(iMod~U,mek,phospho~P,phosphotase3)@c2 <-> ERK(iMod~U,mek!0,phospho~P,phosphotase3)@c2.MEK(erk!0,iMod~U,phosphatase2,phospho~P,raf)@c2 k52,kr52
	MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 + Raf(iMod~U,mMod~M,mek,phosphotase1,ras)@c2 <-> MEK(erk,iMod~U,phosphatase2,phospho~P,raf!0)@c2.Raf(iMod~U,mMod~M,mek!0,phosphotase1,ras)@c2 k44,kr44
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp!6,gtp,iMod~U,raf)@c2.Sos(grb2!7)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp!6,gtp,iMod~U,raf)@c2.Sos(grb2!7)@c2 k6,kr6
	EGFR(egf,egfr,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c1 <-> EGFR(egf,egfr,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2 k6,kr6
	Grb2(egfr,shc,sos)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc!4)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 k24,kr24
	Phosphotase1(raf!0)@c2.Raf(iMod~U,mMod~M,mek,phosphotase1!0,ras)@c2 <-> Raf(iMod~U,mMod~U,mek,phosphotase1,ras)@c2 + Phosphotase1(raf)@c2 functionRate42(),functionRate42m()
	MEK(erk,iMod~I,phosphatase2!0,phospho~P,raf)@c2.Phosphatase2(mek!0)@c2 <-> MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 + Phosphatase2(mek)@c2 functionRate90(),functionRate90m()
	Shc(egfr,grb2,mMod~U)@c2 + EGF(egfr!0,iMod~U)@c3.EGF(egfr!1,iMod~U)@c3.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.EGFR(egf!1,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.GAP(egfr!3)@c3 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~U)@c2 k22,kr22
	Phosphotase1(raf)@c2 + Raf(iMod~I,mMod~M,mek,phosphotase1,ras)@c2 <-> Phosphotase1(raf!0)@c2.Raf(iMod~I,mMod~M,mek,phosphotase1!0,ras)@c2 k42,kr42
	ERK(iMod~U,mek,phospho~P,phosphotase3!0)@c2.Phosphotase3(erk!0)@c2 <-> ERK(iMod~U,mek,phospho~U,phosphotase3)@c2 + Phosphotase3(erk)@c2 functionRate58(),functionRate58m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 + GTP(mMod~M,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~U,raf)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp,gtp!7,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 k20,kr20
	EGF(egfr!0,iMod~U)@c2.EGFR(egf!0,egfr,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2 + EGF(egfr!0,iMod~U)@c2.EGFR(egf!0,egfr,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2 k2*2,kr2
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc!4)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 k6,kr6
	ERK(iMod~U,mek,phospho~P,phosphotase3!0)@c2.Phosphotase3(erk!0)@c2 <-> ERK(iMod~U,mek,phospho~P,phosphotase3)@c2 + Phosphotase3(erk)@c2 functionRate56(),functionRate56m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 k6,kr6
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 + GTP(mMod~M,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~U,raf)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp,gtp!6,iMod~U,raf)@c2.Sos(grb2!7)@c2 k20,kr20
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2 -> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2 k7
	ERK(iMod~U,mek!0,phospho~U,phosphotase3)@c2.MEK(erk!0,iMod~U,phosphatase2,phospho~P,raf)@c2 <-> MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 + ERK(iMod~U,mek,phospho~P,phosphotase3)@c2 functionRate52(),functionRate52m()
	MEK(erk,iMod~I,phosphatase2!0,phospho~P,raf)@c2.Phosphatase2(mek!0)@c2 <-> MEK(erk,iMod~U,phosphatase2,phospho~U,raf)@c2 + Phosphatase2(mek)@c2 functionRate92(),functionRate92m()
	MEK(erk,iMod~I,phosphatase2,phospho~P,raf!0)@c2.Raf(iMod~I,mMod~M,mek!0,phosphotase1,ras)@c2 <-> Raf(iMod~I,mMod~M,mek,phosphotase1,ras)@c2 + MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 functionRate88(),functionRate88m()
	Phosphatase2(mek)@c2 + MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 <-> MEK(erk,iMod~U,phosphatase2!0,phospho~P,raf)@c2.Phosphatase2(mek!0)@c2 k50,kr50
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp!6,gtp,iMod~U,raf)@c2.Sos(grb2!7)@c2 <-> GTP(mMod~U,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~U,raf)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 k19,kr19
	Phosphotase3(erk)@c2 + ERK(iMod~I,mek,phospho~P,phosphotase3)@c2 <-> ERK(iMod~I,mek,phospho~P,phosphotase3!0)@c2.Phosphotase3(erk!0)@c2 k58,kr58
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2 + Grb2(egfr,shc,sos)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2 k16,kr16
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp!7,gtp,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 + Prot(egfr,iMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc!7)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!8)@c2.Grb2(egfr!4,shc!9,sos!10)@c2.Prot(egfr!5,iMod~I)@c2.Ras(egfr!6,gdp!8,gtp,iMod~U,raf)@c2.Shc(egfr!7,grb2!9,mMod~M)@c2.Sos(grb2!10)@c2 k4,kr4
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~U)@c2 k6,kr6
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp,gtp!7,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 + GDP(ras!0)@c2.Ras(egfr,gdp!0,gtp,iMod~U,raf)@c2 k21,kr21
	Grb2(egfr,shc,sos!0)@c2.Sos(grb2!0)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc!4)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 k41,kr41
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 <-> EGF(egfr!0,iMod~U)@c3.EGF(egfr!1,iMod~U)@c3.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.EGFR(egf!1,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.GAP(egfr!3)@c3 + Grb2(egfr,shc,sos!0)@c2.Sos(grb2!0)@c2 k34,kr34
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc!7)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!8)@c2.Grb2(egfr!4,shc!9,sos!10)@c2.Prot(egfr!5,iMod~I)@c2.Ras(egfr!6,gdp,gtp!8,iMod~U,raf)@c2.Shc(egfr!7,grb2!9,mMod~M)@c2.Sos(grb2!10)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp,gtp!7,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 + Prot(egfr,iMod~I)@c2 functionRate124(),functionRate124m()
	Shc(egfr,grb2,mMod~U)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~U)@c2 k22,kr22
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2 k3,kr3
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c3.EGF(egfr!1,iMod~U)@c3.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.EGFR(egf!1,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.GAP(egfr!3)@c3 + Grb2(egfr,shc!0,sos)@c2.Shc(egfr,grb2!0,mMod~M)@c2 k37,kr37
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2 + Grb2(egfr,shc!0,sos)@c2.Shc(egfr,grb2!0,mMod~M)@c2 k37,kr37
	ERK(iMod~U,mek,phospho~U,phosphotase3)@c2 + MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 <-> ERK(iMod~I,mek!0,phospho~U,phosphotase3)@c2.MEK(erk!0,iMod~I,phosphatase2,phospho~P,raf)@c2 k52,kr52
	Phosphotase3(erk)@c2 + ERK(iMod~U,mek,phospho~P,phosphotase3)@c2 <-> ERK(iMod~U,mek,phospho~P,phosphotase3!0)@c2.Phosphotase3(erk!0)@c2 k58,kr58
	MEK(erk,iMod~U,phosphatase2,phospho~U,raf)@c2 + Raf(iMod~I,mMod~M,mek,phosphotase1,ras)@c2 <-> MEK(erk,iMod~I,phosphatase2,phospho~U,raf!0)@c2.Raf(iMod~I,mMod~M,mek!0,phosphotase1,ras)@c2 k44,kr44
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!7,sos)@c2.Prot(egfr!5,iMod~I)@c2.Shc(egfr!6,grb2!7,mMod~M)@c2 <-> Prot(egfr,iMod~I)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 functionRate115(),functionRate115m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 <-> EGF(egfr!0,iMod~U)@c3.EGF(egfr!1,iMod~U)@c3.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.EGFR(egf!1,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.GAP(egfr!3)@c3 + Grb2(egfr,shc!0,sos!1)@c2.Shc(egfr,grb2!0,mMod~M)@c2.Sos(grb2!1)@c2 k32,kr32
	ERK(iMod~U,mek,phospho~P,phosphotase3)@c2 + Phosphotase3(erk)@c2 <-> ERK(iMod~U,mek,phospho~P,phosphotase3!0)@c2.Phosphotase3(erk!0)@c2 k56,kr56
	ERK(iMod~I,mek,phospho~P,phosphotase3!0)@c2.Phosphotase3(erk!0)@c2 <-> ERK(iMod~I,mek,phospho~P,phosphotase3)@c2 + Phosphotase3(erk)@c2 functionRate98(),functionRate98m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 k23,kr23
	Raf(iMod~I,mMod~M,mek,phosphotase1,ras)@c2 + MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 <-> MEK(erk,iMod~I,phosphatase2,phospho~P,raf!0)@c2.Raf(iMod~I,mMod~M,mek!0,phosphotase1,ras)@c2 k44,kr44
	Sos(grb2)@c2 + Grb2(egfr,shc!0,sos)@c2.Shc(egfr,grb2!0,mMod~M)@c2 <-> Grb2(egfr,shc!0,sos!1)@c2.Shc(egfr,grb2!0,mMod~M)@c2.Sos(grb2!1)@c2 k40,kr40
	EGF(egfr,iMod~I)@c2 -> EGFideg()@c3 k61
	MEK(erk,iMod~U,phosphatase2!0,phospho~P,raf)@c2.Phosphatase2(mek!0)@c2 <-> MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 + Phosphatase2(mek)@c2 functionRate48(),functionRate48m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 k6,kr6
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp,gtp!6,iMod~U,raf)@c2.Sos(grb2!7)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 + GDP(ras!0)@c2.Ras(egfr,gdp!0,gtp,iMod~U,raf)@c2 k21,kr21
	Sos(grb2)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 k25,kr25
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2 + Prot(egfr,iMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2.Prot(egfr!5,iMod~I)@c2 k4,kr4
	Grb2(egfr,shc,sos!0)@c2.Sos(grb2!0)@c2 <-> Sos(grb2)@c2 + Grb2(egfr,shc,sos)@c2 k35,kr35
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 + Prot(egfr,iMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!6)@c2.Prot(egfr!5,iMod~I)@c2.Sos(grb2!6)@c2 k4,kr4
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 k6,kr6
	Grb2(egfr,shc!0,sos!1)@c2.Shc(egfr,grb2!0,mMod~M)@c2.Sos(grb2!1)@c2 <-> Shc(egfr,grb2,mMod~M)@c2 + Grb2(egfr,shc,sos!0)@c2.Sos(grb2!0)@c2 k33,kr33
	Sos(grb2)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 k25,kr25
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2 + Grb2(egfr,shc!0,sos!1)@c2.Shc(egfr,grb2!0,mMod~M)@c2.Sos(grb2!1)@c2 k32,kr32
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp,gtp!7,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp,gtp!7,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 k6,kr6
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!7,sos!8)@c2.Prot(egfr!5,iMod~I)@c2.Shc(egfr!6,grb2!7,mMod~M)@c2.Sos(grb2!8)@c2 <-> Prot(egfr,iMod~I)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 functionRate118(),functionRate118m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp!7,gtp,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp!7,gtp,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 k6,kr6
	Sos(grb2)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 k17,kr17
	Prot(egfr,iMod~I)@c2 -> Prot(egfr,iMod~U)@c2 k15
	ERK(iMod~U,mek!0,phospho~P,phosphotase3)@c2.MEK(erk!0,iMod~U,phosphatase2,phospho~P,raf)@c2 <-> ERK(iMod~U,mek,phospho~P,phosphotase3)@c2 + MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 functionRate54(),functionRate54m()
	GTP(mMod~U,ras!0)@c2.Raf(iMod~I,mMod~U,mek,phosphotase1,ras!1)@c2.Ras(egfr,gdp,gtp!0,iMod~I,raf!1)@c2 <-> GTP(mMod~M,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~I,raf)@c2 + Raf(iMod~I,mMod~M,mek,phosphotase1,ras)@c2 k29,kr29
	ERK(iMod~I,mek,phospho~P,phosphotase3)@c2 + Phosphotase3(erk)@c2 <-> ERK(iMod~I,mek,phospho~P,phosphotase3!0)@c2.Phosphotase3(erk!0)@c2 k56,kr56
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp,gtp!7,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 + Prot(egfr,iMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc!7)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!8)@c2.Grb2(egfr!4,shc!9,sos!10)@c2.Prot(egfr!5,iMod~I)@c2.Ras(egfr!6,gdp,gtp!8,iMod~U,raf)@c2.Shc(egfr!7,grb2!9,mMod~M)@c2.Sos(grb2!10)@c2 k4,kr4
	GTP(mMod~M,ras!0)@c2.Raf(iMod~U,mMod~U,mek,phosphotase1,ras!1)@c2.Ras(egfr,gdp,gtp!0,iMod~U,raf!1)@c2 <-> GTP(mMod~M,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~U,raf)@c2 + Raf(iMod~U,mMod~M,mek,phosphotase1,ras)@c2 k29,kr29
	MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 + Phosphatase2(mek)@c2 <-> MEK(erk,iMod~I,phosphatase2!0,phospho~P,raf)@c2.Phosphatase2(mek!0)@c2 k48,kr48
	EGFR(egf,egfr,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2 -> EGFRideg()@c2 k60
	MEK(erk,iMod~U,phosphatase2!0,phospho~P,raf)@c2.Phosphatase2(mek!0)@c2 <-> MEK(erk,iMod~U,phosphatase2,phospho~U,raf)@c2 + Phosphatase2(mek)@c2 functionRate50(),functionRate50m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp,gtp!7,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 + GDP(ras!0)@c2.Ras(egfr,gdp!0,gtp,iMod~U,raf)@c2 k21,kr21
	Grb2(egfr,shc,sos)@c2 + EGF(egfr!0,iMod~U)@c3.EGF(egfr!1,iMod~U)@c3.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.EGFR(egf!1,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.GAP(egfr!3)@c3 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2 k16,kr16
	GDP(ras!0)@c2.Ras(egfr,gdp!0,gtp,iMod~U,raf)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp!6,gtp,iMod~U,raf)@c2.Sos(grb2!7)@c2 k18,kr18
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 + Prot(egfr,iMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!7,sos)@c2.Prot(egfr!5,iMod~I)@c2.Shc(egfr!6,grb2!7,mMod~M)@c2 k4,kr4
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp,gtp!6,iMod~U,raf)@c2.Sos(grb2!7)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras!7,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!5)@c2.Grb2(egfr!4,shc,sos!6)@c2.Ras(egfr!7,gdp,gtp!5,iMod~U,raf)@c2.Sos(grb2!6)@c2 k6,kr6
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp!7,gtp,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 + GTP(mMod~U,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~I,raf)@c2 k19,kr19
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2 + GAP(egfr)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2 k14,kr14
	GTP(mMod~U,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~U,raf)@c2 + Raf(iMod~U,mMod~U,mek,phosphotase1,ras)@c2 <-> GTP(mMod~M,ras!0)@c2.Raf(iMod~U,mMod~U,mek,phosphotase1,ras!1)@c2.Ras(egfr,gdp,gtp!0,iMod~U,raf!1)@c2 k28,kr28
	Grb2(egfr,shc,sos)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2 k24,kr24
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 + Prot(egfr,iMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!7,sos!8)@c2.Prot(egfr!5,iMod~I)@c2.Shc(egfr!6,grb2!7,mMod~M)@c2.Sos(grb2!8)@c2 k4,kr4
	ERK(iMod~U,mek,phospho~U,phosphotase3)@c2 + MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 <-> ERK(iMod~U,mek!0,phospho~U,phosphotase3)@c2.MEK(erk!0,iMod~U,phosphatase2,phospho~P,raf)@c2 k52,kr52
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp!7,gtp,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 + GTP(mMod~U,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~U,raf)@c2 k19,kr19
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp!6,gtp,iMod~U,raf)@c2.Sos(grb2!7)@c2 + Prot(egfr,iMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc,sos!8)@c2.Prot(egfr!5,iMod~I)@c2.Ras(egfr!6,gdp!7,gtp,iMod~U,raf)@c2.Sos(grb2!8)@c2 k4,kr4
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc!4)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c3.EGF(egfr!1,iMod~U)@c3.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.EGFR(egf!1,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.GAP(egfr!3)@c3 + Shc(egfr,grb2,mMod~M)@c2 k37,kr37
	Phosphatase2(mek)@c2 + MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 <-> MEK(erk,iMod~I,phosphatase2!0,phospho~P,raf)@c2.Phosphatase2(mek!0)@c2 k50,kr50
	Phosphotase1(raf)@c2 + Raf(iMod~U,mMod~M,mek,phosphotase1,ras)@c2 <-> Phosphotase1(raf!0)@c2.Raf(iMod~U,mMod~M,mek,phosphotase1!0,ras)@c2 k42,kr42
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!6)@c2.Prot(egfr!5,iMod~I)@c2.Sos(grb2!6)@c2 <-> Prot(egfr,iMod~I)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 functionRate106(),functionRate106m()
	GDP(ras!0)@c2.Ras(egfr,gdp!0,gtp,iMod~U,raf)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp!7,gtp,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 k18,kr18
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc!7)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!8)@c2.Grb2(egfr!4,shc!9,sos!10)@c2.Prot(egfr!5,iMod~I)@c2.Ras(egfr!6,gdp!8,gtp,iMod~U,raf)@c2.Shc(egfr!7,grb2!9,mMod~M)@c2.Sos(grb2!10)@c2 <-> Prot(egfr,iMod~I)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp!7,gtp,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 functionRate121(),functionRate121m()
	Sos(grb2)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 k17,kr17
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2 + GAP(egfr)@c2 <-> EGF(egfr!0,iMod~U)@c3.EGF(egfr!1,iMod~U)@c3.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.EGFR(egf!1,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.GAP(egfr!3)@c3 k8,kr8
	0  -> EGFR(egf,egfr,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c1 k13
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~U)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc!4)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 k23,kr23
	MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 + ERK(iMod~I,mek,phospho~P,phosphotase3)@c2 <-> ERK(iMod~I,mek!0,phospho~P,phosphotase3)@c2.MEK(erk!0,iMod~I,phosphatase2,phospho~P,raf)@c2 k52,kr52
	Grb2(egfr,shc,sos)@c2 + Shc(egfr,grb2,mMod~M)@c2 <-> Grb2(egfr,shc!0,sos)@c2.Shc(egfr,grb2!0,mMod~M)@c2 k24,kr24
	ERK(iMod~I,mek!0,phospho~U,phosphotase3)@c2.MEK(erk!0,iMod~I,phosphatase2,phospho~P,raf)@c2 <-> ERK(iMod~I,mek,phospho~P,phosphotase3)@c2 + MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 functionRate94(),functionRate94m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2 -> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos)@c2 k7
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp!6,gtp,iMod~U,raf)@c2.Sos(grb2!7)@c2 <-> GTP(mMod~U,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~I,raf)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 k19,kr19
	GTP(mMod~M,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~I,raf)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras!7,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!5)@c2.Grb2(egfr!4,shc,sos!6)@c2.Ras(egfr!7,gdp,gtp!5,iMod~U,raf)@c2.Sos(grb2!6)@c2 k20,kr20
	MEK(erk,iMod~U,phosphatase2,phospho~U,raf!0)@c2.Raf(iMod~U,mMod~M,mek!0,phosphotase1,ras)@c2 <-> MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 + Raf(iMod~U,mMod~M,mek,phosphotase1,ras)@c2 functionRate44(),functionRate44m()
	MEK(erk,iMod~U,phosphatase2,phospho~U,raf)@c2 + Raf(iMod~U,mMod~M,mek,phosphotase1,ras)@c2 <-> MEK(erk,iMod~U,phosphatase2,phospho~U,raf!0)@c2.Raf(iMod~U,mMod~M,mek!0,phosphotase1,ras)@c2 k44,kr44
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2 -> EGF_EGFRim2deg()@c2 k60
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2 + Grb2(egfr,shc,sos!0)@c2.Sos(grb2!0)@c2 k34,kr34
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras!7,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!5)@c2.Grb2(egfr!4,shc,sos!6)@c2.Ras(egfr!7,gdp,gtp!5,iMod~U,raf)@c2.Sos(grb2!6)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 + GDP(ras!0)@c2.Ras(egfr,gdp!0,gtp,iMod~U,raf)@c2 k21,kr21
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc,sos!8)@c2.Prot(egfr!5,iMod~I)@c2.Ras(egfr!6,gdp!7,gtp,iMod~U,raf)@c2.Sos(grb2!8)@c2 <-> Prot(egfr,iMod~I)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp!6,gtp,iMod~U,raf)@c2.Sos(grb2!7)@c2 functionRate109(),functionRate109m()
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2 k3,kr3
	GTP(mMod~U,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~I,raf)@c2 + Raf(iMod~U,mMod~U,mek,phosphotase1,ras)@c2 <-> GTP(mMod~U,ras!0)@c2.Raf(iMod~I,mMod~U,mek,phosphotase1,ras!1)@c2.Ras(egfr,gdp,gtp!0,iMod~I,raf!1)@c2 k28,kr28
	EGF(egfr!0,iMod~U)@c3.EGF(egfr!1,iMod~U)@c3.EGFR(egf!0,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.EGFR(egf!1,egfr!2,gap!3,grb2,iMod~U,mMod~M,prot,ras,shc)@c3.GAP(egfr!3)@c3 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2 k6,kr6
	Grb2(egfr,shc,sos!0)@c2.Sos(grb2!0)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2,iMod~I,mMod~M,prot,ras,shc!4)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Shc(egfr!4,grb2,mMod~M)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 k41,kr41
	Phosphotase1(raf!0)@c2.Raf(iMod~I,mMod~M,mek,phosphotase1!0,ras)@c2 <-> Raf(iMod~U,mMod~U,mek,phosphotase1,ras)@c2 + Phosphotase1(raf)@c2 functionRate84(),functionRate84m()
	GDP(ras!0)@c2.Ras(egfr,gdp!0,gtp,iMod~U,raf)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc,sos!5)@c2.Sos(grb2!5)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!6)@c2.Grb2(egfr!4,shc,sos!7)@c2.Ras(egfr!5,gdp!6,gtp,iMod~U,raf)@c2.Sos(grb2!7)@c2 k18,kr18
	GDP(ras!0)@c2.Ras(egfr,gdp!0,gtp,iMod~U,raf)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GDP(ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp!7,gtp,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 k18,kr18
	EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~U,mMod~M,prot!5,ras!6,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~U,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc,sos!8)@c2.Prot(egfr!5,iMod~I)@c2.Ras(egfr!6,gdp,gtp!7,iMod~U,raf)@c2.Sos(grb2!8)@c2 <-> Prot(egfr,iMod~I)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras!7,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!5)@c2.Grb2(egfr!4,shc,sos!6)@c2.Ras(egfr!7,gdp,gtp!5,iMod~U,raf)@c2.Sos(grb2!6)@c2 functionRate112(),functionRate112m()
	EGFR(egf,egfr,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2 + EGF(egfr,iMod~I)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGFR(egf!0,egfr,gap,grb2,iMod~I,mMod~U,prot,ras,shc)@c2 k10,kr10
	MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 + Phosphatase2(mek)@c2 <-> MEK(erk,iMod~U,phosphatase2!0,phospho~P,raf)@c2.Phosphatase2(mek!0)@c2 k48,kr48
	EGF(egfr,iMod~U)@c1 + EGFR(egf,egfr,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c1 <-> EGF(egfr!0,iMod~U)@c2.EGFR(egf!0,egfr,gap,grb2,iMod~U,mMod~U,prot,ras,shc)@c2 k1,kr1
	MEK(erk,iMod~I,phosphatase2,phospho~U,raf!0)@c2.Raf(iMod~I,mMod~M,mek!0,phosphotase1,ras)@c2 <-> MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 + Raf(iMod~I,mMod~M,mek,phosphotase1,ras)@c2 functionRate86(),functionRate86m()
	Shc(egfr,grb2,mMod~M)@c2 -> Shc(egfr,grb2,mMod~U)@c2 functionRate35()
	GTP(mMod~M,ras!0)@c2.Ras(egfr,gdp,gtp!0,iMod~I,raf)@c2 + EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras,shc!5)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.Grb2(egfr!4,shc!6,sos!7)@c2.Shc(egfr!5,grb2!6,mMod~M)@c2.Sos(grb2!7)@c2 <-> EGF(egfr!0,iMod~U)@c2.EGF(egfr!1,iMod~U)@c2.EGFR(egf!0,egfr!2,gap!3,grb2!4,iMod~I,mMod~M,prot,ras!5,shc!6)@c2.EGFR(egf!1,egfr!2,gap,grb2,iMod~I,mMod~M,prot,ras,shc)@c2.GAP(egfr!3)@c2.GTP(mMod~U,ras!7)@c2.Grb2(egfr!4,shc!8,sos!9)@c2.Ras(egfr!5,gdp,gtp!7,iMod~U,raf)@c2.Shc(egfr!6,grb2!8,mMod~M)@c2.Sos(grb2!9)@c2 k20,kr20
	MEK(erk,iMod~U,phosphatase2,phospho~P,raf!0)@c2.Raf(iMod~U,mMod~M,mek!0,phosphotase1,ras)@c2 <-> MEK(erk,iMod~U,phosphatase2,phospho~P,raf)@c2 + Raf(iMod~U,mMod~M,mek,phosphotase1,ras)@c2 functionRate46(),functionRate46m()
	ERK(iMod~I,mek!0,phospho~P,phosphotase3)@c2.MEK(erk!0,iMod~I,phosphatase2,phospho~P,raf)@c2 <-> ERK(iMod~I,mek,phospho~P,phosphotase3)@c2 + MEK(erk,iMod~I,phosphatase2,phospho~P,raf)@c2 functionRate96(),functionRate96m()
end reaction rules
end model
generate_network({overwrite=>1})
simulate({method=>"ode",t_end=>100,n_steps=>100})
